20110922_164241 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 200 ul;Labware1
1,1;DiTi 200 ul;Labware2
1,2;DiTi 200 ul;Labware3
7,0;Tube Eppendorf 3x16 Pos;Proben
11,0;Washstation 2Grid Cleaner short
11,1;Washstation 2Grid Waste
11,2;Washstation 2Grid Cleaner long
11,6;Washstation 2Grid DiTi Waste
14,0;96 Well PCR Plate;PCR1
14,1;96 Well PCR Plate;PCR-2
14,2;96 Well PCR Plate;PCR3
21,0;Tube Eppendorf 16 Pos;MM + Primer
1;System
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--{ RPG }--
UserPrompt("Bitte beachten: Mit diesem Programm wird MASTERMIX VERTEILT ",0,-1);
Comment("START");
Variable(VolMM,"19.5",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PrimerOffset,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Rack_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(AnzahlProben,"4",1,"Wieviel Proben sollen pipettiert werden",0,1.000000,10.000000,0,2,1,0);
Variable(AnzahlMastermix,"AnzahlProben*2",0,"Wieviel Proben sollen pipettiert werden",0,1.000000,10.000000,0,2,0,0);
Variable(MMGesamt,"AnzahlProben*2",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Multipip,"8",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RestPip,"MMGesamt%Multipip",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(AnzahlMultipip,"(MMGesamt-RestPip)/Multipip",0,"",0,1.000000,10.000000,0,2,0,0);
If("MMGesamt",2,"288","Fehler");
Comment("Start MMVerteilen");
Group("MM  wird pipettiert");
Wash(1,11,1,11,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
GetDITI2(1,"DiTi 200 ul",0,0,10,70);
BeginLoop("AnzahlMastermix","Verteilen");
Comment("Fehlerhandling LLD");
OnError(0,47);
If("PrimerOffset",0,"-10","FIN");
Variable(WELL_OFFSET,"PrimerOffset",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"MM_freeDispense","VolMM*Multipip",0,0,0,0,0,0,0,0,0,0,0,21,0,1,"0110002",0,0);
OnError(1,46);
Variable(WELL_OFFSET,"WELL_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"Rack_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("Multipip","AbgabeMM");
Variable(WELL_OFFSET,"WELL_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"Rack_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"MM_freeDispense","VolMM",0,0,0,0,0,0,0,0,0,0,0,14,0,1,"0C0810000000000000",0,0);
Variable(WELL_Versatz,"WELL_Versatz+1",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_Versatz",0,"96");
Variable(Rack_Versatz,"Rack_Versatz+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
EndLoop();
If("Rack_Versatz",0,"3","FIN");
DropDITI(1,11,6,10,70,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("FIN");
EndScript(0);
Comment("FehlerLLD");
Variable(WELL_OFFSET,"PrimerOffset",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,11,6,10,70,0);
GetDITI2(1,"DiTi 200 ul",0,0,10,70);
Aspirate(1,"Uebertrag","80",0,0,0,0,0,0,0,0,0,0,0,21,0,1,"0110002",0,0);
Variable(WELL_OFFSET,"PrimerOffset-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Uebertrag","80",0,0,0,0,0,0,0,0,0,0,0,21,0,1,"0110002",0,0);
Variable(PrimerOffset,"PrimerOffset-1",0,"",0,1.000000,10.000000,0,2,0,0);
Resume(1,21);
Comment("Fehler");
UserPrompt("Die Gesamtpipettierung übersteigt die drei 96 Well Platten- bitte erneute Eingabe",0,-1);
