20110928_114527 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 200 ul;Labware1
1,1;DiTi 200 ul;Labware2
1,2;DiTi 200 ul;Labware3
7,0;Tube Eppendorf 3x16 Pos;Proben
11,0;Washstation 2Grid Cleaner short
11,1;Washstation 2Grid Waste
11,2;Washstation 2Grid Cleaner long
11,6;Washstation 2Grid DiTi Waste
14,0;96 Well PCR Plate;PCR1
14,1;96 Well PCR Plate;PCR-2
14,2;96 Well PCR Plate;PCR3
21,0;Tube Eppendorf 16 Pos;MM + Primer
1;System
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--{ RPG }--
Comment("START");
Comment("Def Var");
Group("Def Var");
Variable(FileName,"C:\Users\elisa.reader\Documents\PCRsetup\PCRsetup.xlsx",1,"PCR setup Excel File: ",0,1.000000,10.000000,1,2,1,1);
Variable(MulPmaxV,"150",1,"Max Vol in multipipeten",0,1.000000,10.000000,0,2,1,0);
Variable(CurrRack,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(totPlateRack,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(FirstPlateWell,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(LastPlateWell,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CurrPlateRack,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CurrPos,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CurrWellPos,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CurrFileRow,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Command,"End:",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(Name,"-",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(H_RackNum,"RackNum:",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(RackNum,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(H_Position,"-",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(Pos,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(H_Vol,"Vol:",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(Vol,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
Group("Read PCR mix");
Variable(PCRmixPos,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Read a new Command");
Variable(CurrFileRow,"CurrFileRow+1",0,"",0,1.000000,10.000000,0,2,0,0);
ImportVariable(Command,"C:\PCRsetup\PCRsetup.xlsx",1,"End:",1,CurrFileRow,1,1,0);
Comment("Read a new PCR Mix from file");
Variable(DefPCRVol,"25",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(DefSampleVol,"5",0,"",0,1.000000,10.000000,0,2,0,0);
If("Command",0,"End:","FIN");
If("Command",1,"PCRmix:","Read a new Command");
ImportVariable(PCRmixName#H_RackNum#RackNum#H_Position#Pos#H_PCR_V#DefPCRVol#H_Samp_V#SampleV,"C:\PCRsetup\PCRsetup.xlsx",1#1#0#1#0#1#0#1#0,"-#RackNum:#-1#Position:#-1#Def PCR Vol:#25#Sample Vol:#5",1,CurrFileRow,1,2,0);
Variable(DefPCRmixVol,"DefPCRVol-DefSampleVol",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("RackNum",3,"0");
Else();
Variable(CurrRack,"RackNum",0,"Wie viele PCR Mix?",0,1.000000,10.000000,0,2,0,0);
EndIf();
IfThen("Pos",3,"0");
Variable(CurrPos,"CurrPos+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixPos,"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixPos,"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GroupEnd();
Group("Read PCR mix components");
Variable(PCRmixReplyTotal,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReplyRack[~PCRmixReplyTotal~],"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReplyPos[~PCRmixReplyTotal~],"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReactiveTotal,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReactiveRack[~PCRmixReactiveTotal~],"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReactivePos[~PCRmixReactiveTotal~],"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Read a new PCRmix component Command ");
Variable(CurrFileRow,"CurrFileRow+1",0,"",0,1.000000,10.000000,0,2,0,0);
ImportVariable(Command,"C:\PCRsetup\PCRsetup.xlsx",1,"-",1,CurrFileRow,1,1,0);
If("Command",0,"End:","FIN");
Group("Read Reply:");
IfThen("Command",0,"Reply:");
Variable(PCRmixReplyTotal,"PCRmixReplyTotal+1",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Read a new PCR Mix Reply from file");
ImportVariable(PCRmixName#H_Rack#RackNum#H_Pos#Pos#H_PCR_V#PCRVol#H_Samp_V#SampleV,"C:\PCRsetup\PCRsetup.xlsx",1#1#0#1#0#1#0#1#0,"-#RackNum:#-1#Position:#-1#Def PCR Vol:#-1#Sample Vol:#-1",1,CurrFileRow,1,2,0);
IfThen("RackNum",3,"0");
Variable(PCRmixReplyRack[~PCRmixReplyTotal~],"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixReplyRack[~PCRmixReplyTotal~],"RackNum",0,"Wie viele PCR Mix?",0,1.000000,10.000000,0,2,0,0);
EndIf();
IfThen("Pos",3,"0");
Variable(CurrPos,"CurrPos+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReplyPos[~PCRmixReplyTotal~],"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixReplyPos[~PCRmixReplyTotal~],"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(Command,"Read a new PCRmix component Command ",0,"",0,1.000000,10.000000,1,2,0,0);
Else();
EndIf();
GroupEnd();
Group("Read Reactive:");
IfThen("Command",0,"Reactive:");
Variable(PCRmixReactiveTotal,"PCRmixReactiveTotal+1",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Read a new PCR Mix Reactive from file");
ImportVariable(CompName#H_Rack#RackNum#H_Pos#Pos#H_ReacC#ReacC#H_PCR_C#PCR_C,"C:\PCRsetup\PCRsetup.xlsx",1#1#0#1#0#1#0#1#0,"-#RackNum:#-1#Position:#-1#React Conc:#-1#PCR conc:#-1",1,CurrFileRow,1,2,0);
IfThen("RackNum",3,"0");
Variable(PCRmixReactiveRack[~PCRmixReactiveTotal~],"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixReactiveRack[~PCRmixReactiveTotal~],"RackNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
IfThen("Pos",3,"0");
Variable(CurrPos,"CurrPos+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixReactivePos[~PCRmixReactiveTotal~],"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixReactivePos[~PCRmixReactiveTotal~],"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(Command,"Read a new PCRmix component Command ",0,"Wie viele PCR Mix?",0,1.000000,10.000000,1,2,0,0);
Else();
EndIf();
GroupEnd();
Group("Read Diluent:");
IfThen("Command",0,"Diluent:");
Comment("Read a new PCR Mix Diluent from file");
ImportVariable(CompName#H_Rack#RackNum#H_Pos#Pos,"C:\PCRsetup\PCRsetup.xlsx",1#1#0#1#0,"-#RackNum:#-1#Position:#-1",1,CurrFileRow,1,2,0);
IfThen("RackNum",3,"0");
Variable(PCRmixDiluentRack,"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixDiluentRack,"RackNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
IfThen("Pos",3,"0");
Variable(CurrPos,"CurrPos+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PCRmixDiluentPos,"CurrPos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(PCRmixDiluentPos,"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(Command,"Read a new PCRmix component Command ",0,"Wie viele PCR Mix?",0,1.000000,10.000000,1,2,0,0);
Else();
EndIf();
GroupEnd();
If("Command",0,"Read a new PCRmix component Command ","Read a new PCRmix component Command ");
GroupEnd();
If("Command",1,"Well:","Read a new PCR Mix from file");
Group("Read Wells:");
Variable(PCRmixVolTotal,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(ReactionTotal,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Rack[~ReactionTotal~],"CurrPlateRack",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Pos[~ReactionTotal~],"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(MixVol[~ReactionTotal~],"DefPCRmixVol",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(H_Row,"Row:",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(Row,"-1",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(H_Column,"Column:",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(Col,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(r,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Read a new Well from file");
Variable(r,"r+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(ReactionTotal,"r",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Pos[~r~],"-1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RowNum,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
ImportVariable(Name#H_Rack#RackNum#H_Pos#Pos#H_Vol#Vol#H_Row#Row#H_Column#Col,"C:\PCRsetup\PCRsetup.xlsx",1#1#0#1#0#1#0#1#1#1#0,"-#RackNum:#-1#Position:#-1#PCRmix Vol:#-1#Row:#-1#Column:#-1",1,CurrFileRow,1,2,0);
IfThen("RackNum",3,"0");
Variable(Rack[~r~],"CurrPlateRack",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(Rack[~r~],"RackNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
IfThen("Pos",2,"-1");
Variable(Pos[~r~],"Pos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Col",1,"-1");
IfThen("Row",1,"-1");
IfThen("Row",0,"A");
Variable(RowNum,"0 ",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"B");
Variable(RowNum,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"C");
Variable(RowNum,"2",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"D");
Variable(RowNum,"3",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"E");
Variable(RowNum,"4",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"F");
Variable(RowNum,"5",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"G");
Variable(RowNum,"6",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("Row",0,"H");
Variable(RowNum,"7",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
EndIf();
EndIf();
EndIf();
EndIf();
EndIf();
EndIf();
EndIf();
Variable(Pos[~r~],"Col *8+ RowNum-1",0,"Wie viele PCR Mix?",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Else();
EndIf();
IfThen("Pos[~r~]",3,"0");
Variable(CurrWellPos,"CurrWellPos+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Pos[~r~],"CurrWellPos",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
EndIf();
IfThen("Vol",2,"0");
Variable(MixVol[~r~],"Vol-DefSampleVol",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(MixVol[~r~],"DefPCRmixVol",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(PCRmixVolTotal,"PCRmixVolTotal+MixVol[~r~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CurrFileRow,"CurrFileRow+1",0,"Wie viele PCR Mix?",0,1.000000,10.000000,0,2,0,0);
ImportVariable(Command,"C:\PCRsetup\PCRsetup.xlsx",1,"End:",1,CurrFileRow,1,1,0);
If("Command",0,"Well:","Read a new Well from file");
GroupEnd();
Comment("Beging PCRmix pipeting");
GetDITI2(1,"DiTi 200 ul",0,0,10,70);
Variable(VolinPip,"0",0,"Wie viele PCR Mix?",0,1.000000,10.000000,0,2,0,0);
BeginLoop("ReactionTotal","r");
Variable(r,"LOOP_r",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(VolDisp,"MixVol[~r~]",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("VolinPip",3,"VolDisp");
IfThen("PCRmixVolTotal",2,"MulPmaxV-VolinPip");
Variable(VolAsp,"MulPmaxV-VolinPip",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(VolAsp,"PCRmixVolTotal",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Comment("ASPIRATING PCR mix   !!!");
Variable(WELL_OFFSET,"PCRmixPos",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"CurrRack",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"Water free dispense  1","VolAsp",0,0,0,0,0,0,0,0,0,0,0,21,0,1,"0110100",0,0);
Variable(PCRmixVolTotal,"PCRmixVolTotal-VolAsp",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(VolinPip,"VolinPip+VolAsp",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Comment("DISPENSING PCR mix in Plate  !!!");
Variable(WELL_OFFSET,"Pos[~r~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"Rack[~r~]",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"Water free dispense  1","VolDisp",0,0,0,0,0,0,0,0,0,0,0,14,0,1,"0C0810000000000000",0,0);
Variable(VolinPip,"VolinPip-VolDisp",0,"",0,1.000000,10.000000,0,2,0,0);
EndLoop();
DropDITI(1,11,6,10,70,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Wash(1,11,1,11,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
If("Command",1,"End:","Read a new PCR Mix from file");
EndScript(0);
Comment("FIN");
Comment("Fehler");
