20110915_115441 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 200 ul;Labware1
1,1;DiTi 200 ul;Labware2
1,2;DiTi 200 ul;Labware3
7,0;Tube Eppendorf 3x16 Pos;Proben
11,0;Washstation 2Grid Cleaner short
11,1;Washstation 2Grid Waste
11,2;Washstation 2Grid Cleaner long
11,6;Washstation 2Grid DiTi Waste
14,0;96 Well PCR Plate;PCR1
14,1;96 Well PCR Plate;PCR-2
14,2;96 Well PCR Plate;PCR3
21,0;Tube Eppendorf 16 Pos;MM + Primer
1;System
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--{ RPG }--
Comment("START");
Variable(WELL_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Rack_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(VolPrimer,"2",0,"Wieviel Primer sind vorhanden",0,1.000000,10.000000,0,2,0,0);
Variable(Primer,"2",1,"Wieviel Primer sind vorhanden",0,1.000000,10.000000,0,2,1,0);
Variable(AnzahlProben,"4",1,"Wieviel Proben sollen pipettiert werden",0,1.000000,10.000000,0,2,1,0);
Variable(MMGesamt,"AnzahlProben*3*Primer",0,"",0,1.000000,10.000000,0,2,0,0);
If("MMGesamt",2,"288","Fehler");
Comment("MM und Primer 1 wurden verteilt - Well Offset zu Primer 2");
Variable(PipPrimer,"AnzahlProben*3",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CounterRestwells,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Maximale Wells/Primer - 48x3 entspricht 144(2 Platten)");
Comment("Unterscheidung, ob die Proben und Primer1 komplett auf Platte 1 passen");
Comment("Freie Wells: Proben die noch auf diesselbe Platte passen");
Variable(FreieWells,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PiP_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("ZuPipettieren: Proben die noch auf diesselbe Platte passen");
Variable(ZuPipettieren,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Restproben:Proben die auf die nächste Platte müssen");
Variable(RestProben,"0",0,"",0,1.000000,10.000000,0,2,0,0);
If("1",0,"1","Berechnung Welloffset Primer 2: ");
Group("Primer 1 wird pipettiert");
IfThen("PipPrimer",3,"97");
Comment("Primer 1 passt komplett auf Platte 1");
Comment("ZuPipettieren sind die Probentripletts");
Variable(ZuPipettieren,"PipPrimer",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Comment("Primer 1 passt nicht komplett auf Platte 1");
Comment("ZuPipettieren sind die Probentripletts für 32 Proben (1 Platte)");
Variable(ZuPipettieren,"32*3",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Restproben auf Platte 2");
Variable(Restproben,"AnzahlProben-32",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(ZuPipettieren,"Restproben*3",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GroupEnd();
If("Primer",0,"1","FIN");
Group("Primer 2 wird pipettiert");
Comment("Berechnung Welloffset Primer 2: ");
Variable(StartPosPrimer2,"AnzahlProben*3*1",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("StartPosPrimer2",3,"96");
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_Versatz,"StartPosPrimer2",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Freie Wells - so viele neue Proben können auf die Platte");
Variable(FreieWells,"96-StartPosPrimer2",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(MultiPipREST,"PipPrimer%12",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(AnzahlMultipip12,"(PipPrimer-MultiPipREST)/12",0,"",0,1.000000,10.000000,0,2,0,0);
UserPrompt("der Plattenoffset beträgt ~RACK_OFFSET~de rWell Offset beträgt ~WELL_OFFSET~freie Wells sind ~FreieWells~es wird ~MultiPipREST~ 12 fach pipettiert und ~MultiPipRest~ einfach",0,-1);
Else();
Variable(RACK_OFFSET,"1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_Versatz,"StartPosPrimer2-96",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(FreieWells,"96-WELL_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(MultiPipREST,"PipPrimer%12",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(AnzahlMultipip12,"(PipPrimer-MultiPipREST)/12",0,"",0,1.000000,10.000000,0,2,0,0);
UserPrompt("der Plattenoffset beträgt ~RACK_OFFSET~de rWell Offset beträgt ~WELL_OFFSET~freie Wells sind ~FreieWells~es wird ~MultiPipREST~ 12 fach pipettiert und ~MultiPipRest~ einfach",0,-1);
EndIf();
BeginLoop("AnzahlMultipip12","Ppettiert12fach");
GetDITI2(1,"DiTi 200 ul",0,0,10,70);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(1,"MM","12*VolPrimer",0,0,0,0,0,0,0,0,0,0,0,21,0,1,"0110100",0,0);
BeginLoop("12","VerteilenPrimer");
Variable(WELL_OFFSET,"WELL_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"Rack_Versatz",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(1,"MM","VolPrimer",0,0,0,0,0,0,0,0,0,0,0,14,0,1,"0C0810000000000000",0,0);
Variable(WELL_Versatz,"WELL_Versatz+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(CounterRestwells,"CounterRestwells+1",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("CounterRestwells",0,"FreieWells");
Variable(Rack_Versatz,"Rack_Versatz+1",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_Versatz,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(1,11,6,10,70,0);
EndLoop();
GroupEnd();
EndScript(0);
Comment("FIN");
Comment("Fehler");
UserPrompt("Die Gesamtpipettierung übersteigt die drei 96 Well Platten- bitte erneute Eingabe",0,-1);
