20141010_083118 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("NucleoMag VET for up to 48 samples");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_InitGeneral.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Init_MN_RNAextVet.esc",0);
Group("Flush");
IfThen("NoDrops",0,"0");
Wash(15,22,1,22,0,"8.0",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
EndIf();
GroupEnd();
Group("Lysis");
Comment("--- LYSIS ---");
IfThen("isTRIzolSamples",0,"yes");
Variable(SampleVol,"400",1,"Sample volumen?(µL)",1,50.000000,400.000000,0,2,1,0);
UserPrompt("Preload  ~SampleNum~  TRIzol lysed samples tubes in columns of ~Tip_tNum~ tubes each on te-mags with ~SampleVol~ µL of the aqueous phase",1,-1);
Variable(AccumulatedVol,"AccumulatedVol + SampleVol",0,"",0,50.000000,400.000000,0,2,0,0);
Else();
Variable(SampleVol,"200",1,"Sample volumen to use?(200 µL)",1,50.000000,200.000000,0,2,1,0);
IfThen("preInactiveSample",0,"yes");
Variable(lys_mix," React[~pK_cRNA_12~].V1s+ LysBufVL + React[~IC_MS2_00~].V1s",0,"Vol to be removed",0,1.000000,50.000000,0,2,0,0);
IfThen("Dispense_Lysis_Mix",0,"yes");
UserPrompt("Place ~SampleNum~ clean epp tubes on te-mags.(In columns of ~Tip_tNum~ tubes each)Reactive Position ~React[10].Pos~: >~React[10].Vol~ µL of ~React[10].name~Reactive Position ~React[11].Pos~:  >~React[11].Vol~ µL of ~React[11].name~Buffer Position ~React[13].Pos~: >~React[13].Vol/1000~ mL of ~React[13].name~",2,-1);
UserPrompt("Place in Probe rack ~SampleNum~ clean Eppendorf tubes for ~lys_mix~ µL of lysis mix ",1,-1);
Variable(Dispense,"ToSamples",0,"",0,50.000000,400.000000,1,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_LysisMix.esc",0);
UserPrompt("Add ~SampleVol~ µL of sample, incubate 10 min at RT, and Press OK when the Inactivated samples are back in place.Alternatively. press CANCEL, conserve the samples and run the scrips when you decide to continue.",2,-1);
Variable(SampleVol,"SampleVol + lys_mix",0,"Vol to be removed",0,1.000000,50.000000,0,2,0,0);
Else();
Variable(SampleVol,"SampleVol + lys_mix",0,"Vol to be removed",0,1.000000,50.000000,0,2,0,0);
UserPrompt("Preload  ~SampleNum~  lysed samples tubes in columns of ~Tip_tNum~ tubes each on te-mags with ~SampleVol~ µL of inactivated Samples-mix",2,-1);
EndIf();
Else();
UserPrompt("Place ~SampleNum~ clean epp tubes on te-mags.(In columns of ~Tip_tNum~ tubes each)Reactive Position ~React[10].Pos~: >~React[10].Vol~ µL of ~React[10].name~Reactive Position ~React[11].Pos~:  >~React[11].Vol~ µL of ~React[11].name~Buffer Position ~React[13].Pos~: >~React[13].Vol/1000~ mL of ~React[13].name~",2,-1);
UserPrompt("At last ~SampleVol~ µL of ~SampleNum~ Samples in Eppendorf tubes",1,-1);
Variable(Dispense,"ToMag",0,"",0,50.000000,400.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_LysisMix.esc",0);
EndIf();
Variable(ReUseTips,"no",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Samples.esc",0);
IfThen("preInactiveSample",0,"yes");
Else();
StartTimer("10");
WaitTimer("10","10 * 60");
EndIf();
EndIf();
GroupEnd();
Group("Binding");
Comment("--- Binding ---");
Variable(Drop,"yes",0,"",0,1.000000,1000.000000,0,2,0,0);
Variable(Dispense,"BufferToMag",0,"",0,50.000000,400.000000,0,2,0,0);
Group("Binding Buffer            ");
Comment("          Binding Buffer");
Variable(Disp_V,"BindBufVEB",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(RACK_buff,"BindBufVEB_r",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Disp.esc",0);
GroupEnd();
Variable(Dispense,"ToMag",0,"",0,50.000000,400.000000,0,2,0,0);
IfThen("React[~IC2_01~].V1s",2,"0");
Comment("          IC2");
Variable(reactive,"IC2_01",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_DispReact.esc",0);
Else();
EndIf();
Variable(Drop,"no",0,"",0,1.000000,1000.000000,0,2,0,0);
Group("B-Beads");
Comment("          B-Beads (with pre mixing)");
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Group("Get tips");
IfThen("TIP_MASK",2,"NoDrops");
Variable(TIP_MASK,"TIP_MASK - NoDrops",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(NoDrops,"TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
GroupEnd();
Variable(WELL_OFFSET,"B_Beads_w-1",0,"",0,50.000000,400.000000,0,2,0,0);
Detect_Liquid(1,"AVR-Serum 1000",5,0,1,"0110100",0,0);
Variable(Vol,"600",0,"Sample volumen to use?(µL)",0,50.000000,200.000000,0,2,0,0);
Mix(1,">> AVR-Serum 1000 <<	348","Vol",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",2,0,0);
Mix(1,">> AVR-Serum 1000 <<	349","Vol",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",2,0,0);
Variable(Drop,"yes",0,"",0,1.000000,1000.000000,0,2,0,0);
Variable(Dispense,"ReactiveToMag",0,"",0,50.000000,400.000000,0,2,0,0);
Variable(Disp_V,"B_Beads",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(WELL_react,"B_Beads_w",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Disp.esc",0);
Variable(AccumulatedVol,"AccumulatedVol - Disp_V * B_beads_Vp/100",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
Comment("Mix and Waste after Binding. Reuse and preserve tips.");
Variable(ReUseTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Mix_Waste.esc",0);
GroupEnd();
Group("Wash");
Comment("--- Wash ---");
Variable(ReUseTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Dispense,"BufferToMag",0,"",0,50.000000,400.000000,0,2,0,0);
Variable(Drop,"no",0,"",0,1.000000,1000.000000,0,2,0,0);
Comment("          Wash Buffer VEW1");
Variable(Disp_V,"WashBufVEW1",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(RACK_buff,"WashBufVEW1_r",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Disp.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Mix_Waste.esc",0);
Comment("          Wash Buffer VEW2");
Variable(Disp_V,"WashBufVEW2",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(RACK_buff,"WashBufVEW2_r",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Disp.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Mix_Waste.esc",0);
Comment("          Ethanol 80%");
Variable(Disp_V,"EtHO80",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(RACK_buff,"EtHO80_r",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Disp.esc",0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Mix_Waste.esc",0);
Comment("+++++ Mag move to pos 3");
FACTS("Te-MagS","Te-MagS_MoveToPosition","3","0","");
StartTimer("1");
WaitTimer("1","5 * 60");
Comment("+++++ Mag move to pos 0");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
StartTimer("1");
WaitTimer("1","5 * 60");
Comment("+++++  Mag move to pos 0");
GroupEnd();
Group("Elution");
Variable(Drop,"no",0,"",0,1.000000,1000.000000,0,2,0,0);
Variable(Dispense,"ToMag",0,"",0,50.000000,400.000000,0,2,0,0);
Variable(reactive,"ElutBuf_02",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Elution.esc",0);
GroupEnd();
Group("Flush");
IfThen("NoDrops",0,"0");
Wash(15,22,1,22,0,"8.0",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
EndIf();
GroupEnd();
EndScript(0);
