20141008_142016 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
IfThen("PreserveTips",0,"yes");
Group("Preserve tips");
Variable(WELL_OFFSET,"NextPos4ReUsedTip % 96",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"((NextPos4ReUsedTip - WELL_OFFSET) / 96) % Tips_tRacks",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET_end ,"(NextPos4ReUsedTip + sn-1) % 96",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET_end,"((NextPos4ReUsedTip+sn-1 - WELL_OFFSET_end) / 96) % Tips_tRacks",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("RACK_OFFSET",0,"RACK_OFFSET_end");
Variable(TIP_MASK,"tips_m[~sn~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(tip2,"WELL_OFFSET_end+1",0,"Proteinase K (20 µL)?",0,1.000000,30.000000,0,2,0,0);
Variable(tip1,"sn-tip2",0,"Proteinase K (20 µL)?",0,1.000000,30.000000,0,2,0,0);
Variable(TIP_MASK,"tips_m[~tip1~]",0,"",0,1.000000,10.000000,0,2,0,0);
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
Variable(NoDrops,"NoDrops - TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"RACK_OFFSET_end",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(TIP_MASK,"tips_m[~sn~] - TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
Variable(NoDrops,"NoDrops - TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(NextPos4ReUsedTip,"NextPos4ReUsedTip + sn",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
Else();
Variable(TIP_MASK,"tips_m[~sn~]",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(15,22,6,10,70,0);
Variable(NoDrops,"NoDrops - TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
