20141008_142021 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Group("Helper const");
Variable(false,"0",0,"",0,50.000000,200.000000,0,2,0,0);
Variable(true,"1",0,"",0,50.000000,200.000000,0,2,0,0);
Variable(no,"false",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(yes,"true",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(none,"false",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(buffer_,"10",0,"Type of reactive (determine from..)",0,50.000000,200.000000,0,2,0,0);
Variable(reactive_,"11",0,"Type of reactive (determine from..)",0,50.000000,200.000000,0,2,0,0);
Variable(ToMix,"none",0,"Direction of pipeting. Only mixing, no waste!!",0,50.000000,200.000000,0,2,0,0);
Variable(ToSamples,"20",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(ToMag,"21",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(ToWaste,"26",0,"Direction of pipeting.",0,50.000000,200.000000,0,2,0,0);
Variable(ToEluate,"27",0,"Direction of pipeting.",0,50.000000,200.000000,0,2,0,0);
Variable(ReactiveToSamples,"22",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(BufferToSamples,"23",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(ReactiveToMag,"24",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(BufferToMag,"25",0,"Direction of pipeting",0,50.000000,200.000000,0,2,0,0);
Variable(MixFull,"30",0,"Type of mixing",0,50.000000,200.000000,0,2,0,0);
Variable(MixNormal,"MixFull",0,"Type of mixing",0,50.000000,200.000000,0,2,0,0);
Variable(MixFew,"31",0,"Type of mixing",0,50.000000,200.000000,0,2,0,0);
Variable(MixEluate,"MixFew",0,"Type of mixing",0,50.000000,200.000000,0,2,0,0);
GroupEnd();
Group("Robot config");
Comment("+++ Mag act 48gr");
FACTS("Te-MagS","Te-MagS_ActivateHeater","48","0","");
Comment("+++ Mag act 48gr  pos 0");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Variable(Tip_tNum,"4",1,"Nummer of tips",1,1.000000,4.000000,0,2,1,1);
Variable(tip_m[1],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[1],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
BeginLoop("Tip_tNum-1","tip");
Variable(tip,"LOOP_tip+1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tip_m[~tip~],"tip_m[~tip - 1~] * 2",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[~tip~],"tips_m[~tip-1~] + tip_m[~tip~]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Tip200_maxV,"193",1,"Max vol 200µL tips",1,100.000000,193.000000,0,2,1,1);
Variable(Tip1000_maxV,"950",1,"Max vol 1000µL tips",1,700.000000,950.000000,0,2,1,1);
Variable(Disp_tCols,"6",1,"Nummer of columns",1,1.000000,6.000000,0,2,1,1);
Variable(Disp_tRows,"8",1,"Nummer of rows",1,1.000000,8.000000,0,2,1,1);
Variable(Tips_tRacks,"3",1,"Nummer of 1000-tips racks",1,1.000000,3.000000,0,2,1,1);
GroupEnd();
Group("State variables (and global arguments)");
Variable(React.Next,"0",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
BeginLoop("Tip_tNum","tip");
Variable(tipV[~LOOP_tip~],"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(ReUseTips,"yes",1,"Reuse Tips (1 :yes; 0 :no)? ",1,0.000000,1.000000,0,2,1,1);
Variable(PreserveTips,"yes",0,"Preserve Tips (y/n)? ",0,1.000000,1000.000000,0,2,0,0);
Variable(ReUsedTipRack,"1",1,"First tip to reuse in Rack Site: ",1,1.000000,3.000000,0,2,1,0);
Variable(ReUsedTipColumn,"1",1,"First tip to reuse in Column: ",1,1.000000,12.000000,0,2,1,0);
Variable(ReUsedTipRow,"1",1,"First tip to reuse in Row: ",1,1.000000,8.000000,0,2,1,0);
Variable(ReUsedTipWell,"(ReUsedTipColumn-1)*8 + ReUsedTipRow ",0,"First tip to reuse ",0,1.000000,1000.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 1000ul","25","~ReUsedTipRack~","~ReUsedTipWell~",0);
Variable(ReUsedTipBeg,"((ReUsedTipRack -1) * 96) + ReUsedTipWell - 1",0,"First tip to reuse ",0,1.000000,1000.000000,0,2,0,0);
Variable(NextPos4ReUsedTip,"ReUsedTipBeg",0,"Where will the next tip back?",0,1.000000,1000.000000,0,2,0,0);
Variable(Drop,"no",0,"Drop Tips at end (y/n)? ",0,1.000000,1000.000000,0,2,0,0);
Variable(REPLACE_DITI_GRID,"25",0,"Lysis Buffer in position (1):",0,1.000000,9.000000,0,2,0,0);
Variable(REPLACE_DITI_SITE,"1",0,"Lysis Buffer in position (1):",0,1.000000,9.000000,0,2,0,0);
ActivateADH("DiTi 1000ul","C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Tips1000.esc");
Variable(NoDrops,"0",0,"Tip Mask not droped",0,1.000000,1000.000000,0,2,0,0);
Variable(Dispense,"none",0,"direction of pipeting: ReactiveToSamples,  R2M B2S B2M",0,1.000000,8.000000,0,2,0,0);
Variable(WasteTo,"none",0,"R2S R2M B2S B2M",0,1.000000,8.000000,0,2,0,0);
Variable(MagMix,"MixFull",0,"Type of mixing",0,1.000000,8.000000,0,2,0,0);
Variable(AccumulatedVol,"0",0,"Vol accumulatzed in the epi on Mag",0,1.000000,50.000000,0,2,0,0);
GroupEnd();
Group("RNA ext- General. Initializations");
Variable(SampleNum,"6",1,"Number of samples (6)",1,1.000000,48.000000,0,2,1,1);
Variable(Dispense_Lysis_Mix,"no",1,"Dispense Full Lysis Mix(1:yes;0:no) LysB+ProtK+RNA carrier+MS2 ?",1,0.000000,1.000000,0,2,1,1);
Variable(preInactiveSample,"no",1,"Are samples inactivated with Lysis Buffer(1 :yes; 0 :no)?",1,0.000000,1.000000,0,2,1,1);
Variable(preInactiveSampleFullMix,"no",1,"Samples inactived Full(1 :yes; 0 :no) LysB+ProtK+RNA carrier+MS2",1,0.000000,1.000000,0,2,1,1);
Variable(Mix_ex ,"8",1,"Pre-mix excess Volumen percent (8%):",1,0.000000,30.000000,0,2,1,1);
Variable(ex," 1+  Mix_ex / 100",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Group("IC_MS2_00 React");
Variable(name,"IC MS2 (bacterial phage culture)",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(Vol1sample,"20",1,"InternalControl MS2 (20 µL)",1,0.000000,50.000000,0,2,1,1);
Variable(Pos,"14",1,"InternalControl MS2 in well:",1,1.000000,16.000000,0,2,1,1);
Variable(Type,"reactive_",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(Replies,"1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Group("Actualising");
Variable(IC_MS2_00,"0",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[0].name,"~name~",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(this,"IC_MS2_00",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].V1s,"Vol1sample",0,"Proteinase K (20 µL)?",0,1.000000,30.000000,0,2,0,0);
Variable(React[~this~].Pos,"Pos",0,"Proteinase K Vol in well (16):",0,1.000000,16.000000,0,2,0,0);
Variable(React[~this~].Replies,"Replies",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Type,"Type",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Vol,"SampleNum * React[~this~].V1s * ex",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(NextReact,"this+1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
GroupEnd();
GroupEnd();
Group("IC2_01 React");
Variable(name,"IC2 (synthetic RNA)",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(Vol1sample,"0",1,"InternalControl IC2 (0 µL)",1,0.000000,10.000000,0,2,1,1);
Variable(Pos,"11",1,"InternalControl IC2 in well (11):",1,1.000000,16.000000,0,2,1,1);
Variable(Type,"reactive_",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(Replies,"1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Group("Actualising");
Variable(IC2_01,"1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[1].name,"~name~",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(this,"IC2_01",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].V1s,"Vol1sample",0,"Proteinase K (20 µL)?",0,1.000000,30.000000,0,2,0,0);
Variable(React[~this~].Pos,"Pos",0,"Proteinase K Vol in well (16):",0,1.000000,16.000000,0,2,0,0);
Variable(React[~this~].Replies,"Replies",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Type,"Type",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Vol,"SampleNum * React[~this~].V1s * ex",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(NextReact,"this+1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
GroupEnd();
GroupEnd();
Group("ElutBuf_02 React");
Variable(name,"Elution Buffer",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(Vol1sample,"100",1,"Elution Buffer VEL (100 µL )?",1,40.000000,190.000000,0,2,1,1);
Variable(Pos,"8",1,"Elution Buffer VEL  in position (8):",1,1.000000,9.000000,0,2,1,1);
Variable(Type,"buffer_",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(Replies,"1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Group("Actualising");
Variable(ElutBuf_02,"2",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[2].name,"~name~",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,1,2,0,0);
Variable(this,"ElutBuf_02",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].V1s,"Vol1sample",0,"Proteinase K (20 µL)?",0,1.000000,30.000000,0,2,0,0);
Variable(React[~this~].Pos,"Pos",0,"Proteinase K Vol in well (16):",0,1.000000,16.000000,0,2,0,0);
Variable(React[~this~].Replies,"Replies",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Type,"Type",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(React[~this~].Vol,"SampleNum * React[~this~].V1s * ex",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Variable(NextReact,"this+1",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
GroupEnd();
GroupEnd();
UserPrompt("Reactive Position ~React[0].Pos~: >~React[0].Vol~ µL of ~React[0].name~Reactive Position ~React[1].Pos~: >~React[1].Vol~ µL of ~React[1].name~Buffer Position ~React[2].Pos~: >~React[2].Vol/1000~ mL of ~React[2].name~Rack Eluates: Place ~SampleNum~ clean epp tubes to colect the RNA. ",2,-1);
GroupEnd();
IfThen("SampleNum",2,"Disp_tRows * Disp_tCols");
UserPrompt("Error?",1,-1);
Else();
EndIf();
IfThen("SampleNum",3,"Tip_tNum");
Variable(Tip_tNum,"SampleNum % Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
