20141009_094123 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Group("Mix and Waste");
Variable(rutip,"ReUseTips",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(ptip,"PreserveTips",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WasteTo,"ToMix",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(MagMix,"MixNormal",0,"Type of mixing",0,1.000000,8.000000,0,2,0,0);
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Waste.esc",0);
Comment("++++     Mag exec");
FACTS("Te-MagS","Te-MagS_Execution","1:1 0 0 3 31,4:2 31","0","");
StartTimer("1");
WaitTimer("1","30");
Variable(ReUseTips,"ptip",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"no",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WasteTo,"ToWaste",0,"",0,1.000000,10.000000,0,2,0,0);
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Waste.esc",0);
Variable(ReUseTips,"rutip",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"ptip",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
Group("Flush");
IfThen("NoDrops",0,"0");
Wash(15,22,1,22,0,"8.0",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
EndIf();
GroupEnd();
