20141008_142028 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("          Premix  ");
Variable(cn,"React[~premix~].Comp.Num",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(TIP_MASK,"tips_m[~cn~]",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
BeginLoop("cn","c");
Variable(c,"React[~premix~].Comp[~LOOP_c-1~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Vol2pip,"React[~c~] .Vol",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Vol2pip",2,"0");
Variable(TIP_MASK,"tip_m[~LOOP_c~]",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("Cont pip comp");
Variable(Vol,"Vol2pip",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Vol",2,"Tip1000_maxV ");
Variable(Vol,"Tip1000_maxV ",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Variable(WELL_OFFSET,"React[~c~].Pos-1",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(15,"AVR-Water free DITi 1000","Vol","Vol","Vol","Vol",0,0,0,0,0,0,0,0,7,0,1,"0110?00",0,0);
Variable(WELL_OFFSET,"React[~premix~].Pos-1",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(15,">> AVR-Water free DITi 1000 <<	373","Vol ","Vol ","Vol ","Vol ",0,0,0,0,0,0,0,0,7,0,1,"0110?00",0,0);
Variable(Vol2pip,"Vol2pip - Vol",0,"",0,1.000000,10.000000,0,2,0,0);
If("Vol2pip",2,"0","Cont pip comp");
Else();
EndIf();
EndLoop();
Variable(Vol,"React[~premix~].Vol*0.8",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Vol",2,"Tip1000_maxV ");
Variable(Vol,"Tip1000_maxV ",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Mix(15,"AVR-Water free DITi 1000","Vol","Vol","Vol","Vol",0,0,0,0,0,0,0,0,7,0,1,"0110?00",3,0,0);
Variable(WELL_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_MASK,"tips_m[~cn~]",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Drop",0,"yes");
DropDITI(15,22,6,10,70,0);
Variable(NoDrops,"0",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Else();
Variable(NoDrops,"TIP_MASK",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
EndIf();
