20141008_142038 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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4,0;Tube Eppendorf 1 Pos;Labware1
4,1;Tube Eppendorf 2mL 1 Pos;Labware2
4,2;Tube Greiner conic 2mL 1 Pos;Labware3
5,0;Tube Eppendorf 2mL 16 Pos;Reactives2
6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_InitGeneral.esc",0);
ActivateADH("DiTi 1000ul","C:\ProgramData\Tecan\EVOware\database\Scripts\empty.esc");
Group("Washing");
Variable(ReUseTips,"no",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(PreserveTips,"yes",0,"",0,1.000000,10.000000,0,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_Init_ReuseTips1000.esc",0);
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(SampleCnt,"3 * 96",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(sn,"Tip_tNum",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Next sample");
IfThen("SampleCnt",3,"sn");
Variable(sn,"SampleCnt",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_GetTips1000.esc",0);
Comment("P I P P E T I N G   !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!");
Mix(15,">> AVR-Water free DITi 1000 <<	397","Tip1000_maxV","Tip1000_maxV","Tip1000_maxV","Tip1000_maxV",0,0,0,0,0,0,0,0,22,3,1,"0108l0",2,0,0);
Mix(15,">> AVR-Water free DITi 1000 <<	396","Tip1000_maxV","Tip1000_maxV","Tip1000_maxV","Tip1000_maxV",0,0,0,0,0,0,0,0,24,0,1,"0108l0",2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_DropTips1000.esc",0);
Variable(SampleCnt,"SampleCnt-sn",0,"",0,1.000000,10.000000,0,2,0,0);
If("SampleCnt",2,"0","Next sample");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_End_ReuseTips1000.esc",0);
GroupEnd();
