20190410_135512 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube Eppendorf 1 Pos;Labware1
1,1;Tube Eppendorf 2mL 1 Pos;Labware2
1,2;Tube Greiner conic 2mL 1 Pos;Labware3
2,0;Tube Eppendorf 2mL 16 Pos;Reactives2
5,0;Tube Greinerconic 2mL 16 Pos;Reactives
6,0;Tube Eppendorf 3x 16 PosR;Eluat
9,0;Tube Eppendorf 3x 16 Pos;Proben
12,0;Tube Eppendorf 48 Pos;48 Pos Heat
12,1;Tube Eppendorf 48 Pos;48PosMagnet
20,0;Trough 100ml;1-VEL-ElutionBuffer
20,1;Trough 100ml;2-Vl Lysis Buffer
20,2;Trough 100ml;3-VEB Binding Buffer
21,0;Trough 100ml;7-EtOH80p
21,1;Trough 100ml;8-Unnused
21,2;Trough 100ml;9-Unnused
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;6-Waste
23,6;Washstation 2Grid DiTi Waste
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("original samplesfor extracting RNA from 48 samples with the MN-Vet kit");
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
FACTS("Te-MagS","Te-MagS_ActivateHeater","50","0","");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("preMix: 2534.4 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("preMix: 2534.4 µL of ProtK+cRNA+IC-MS2 mix  into grid:5 site:1 ['well 8 in Reactives :  with 0.0 uL of ProtK+cRNA+IC-MS2 mix ', 'well 9 in Reactives :  with 0.0 uL of ProtK+cRNA+IC-MS2 mix '] from 3 components:");
Comment("   1- 230.4 µL from grid:5 site:1:['well 14 in Reactives :  with 238.0 uL of Carrier RNA ']");
Aspirate(1,"Water wet","230.40","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"01100p0",0,0);
Dispense(1,"Water wet","115.20","115.20","115.20","115.20",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(1,"Water wet","115.20","115.20","115.20","115.20",0,0,0,0,0,0,0,0,5,0,1,"0110020",0,0);
Comment("   2- 1152.0 µL from grid:5 site:1:['well 15 in Reactives :  with 607.0 uL of Proteinase K ', 'well 16 in Reactives :  with 595.0 uL of Proteinase K ']");
Aspirate(2,"Water wet","0","607.00","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110001",0,0);
Dispense(2,"Water wet","303.50","303.50","303.50","303.50",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(2,"Water wet","303.50","303.50","303.50","303.50",0,0,0,0,0,0,0,0,5,0,1,"0110020",0,0);
Aspirate(2,"Water wet","0","545.00","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110002",0,0);
Dispense(2,"Water wet","272.50","272.50","272.50","272.50",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(2,"Water wet","272.50","272.50","272.50","272.50",0,0,0,0,0,0,0,0,5,0,1,"0110020",0,0);
Comment("   3- 1152.0 µL from grid:5 site:1:['well 13 in Reactives :  with 1190.0 uL of IC MS2 phage culture ']");
Aspirate(4,"Water wet","0","0","940","0",0,0,0,0,0,0,0,0,5,0,1,"01100P0",0,0);
Dispense(4,"Water wet","470.00","470.00","470.00","470.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(4,"Water wet","470.00","470.00","470.00","470.00",0,0,0,0,0,0,0,0,5,0,1,"0110020",0,0);
Aspirate(4,"Water wet","0","0","212.00","0",0,0,0,0,0,0,0,0,5,0,1,"01100P0",0,0);
Dispense(4,"Water wet","106.00","106.00","106.00","106.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(4,"Water wet","106.00","106.00","106.00","106.00",0,0,0,0,0,0,0,0,5,0,1,"0110020",0,0);
Mix(3,"Water free","846.00","846.00","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110030",3,0,0);
GroupEnd();
Group("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix  (2534.4 µL total) from [grid:5 site:1 ['well 8 in Reactives :  with 1267.2 uL of ProtK+cRNA+IC-MS2 mix ', 'well 9 in Reactives :  with 1267.2 uL of ProtK+cRNA+IC-MS2 mix '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
Aspirate(3,"Water free","528.00","528.00","528.00","528.00",0,0,0,0,0,0,0,0,5,0,1,"0110030",0,0);
Aspirate(12,"Water free","528.00","528.00","528.00","528.00",0,0,0,0,0,0,0,0,5,0,1,"0110030",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Group("Transfer: 200.0 µL of Proben");
Comment("Transfer: 200.0 µL of Proben [grid:9 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310?000000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310 100000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Set_DITIs_Back(15,25,0,"0C08 1000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"03100N00000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Set_DITIs_Back(15,25,0,"0C080N000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310030000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Set_DITIs_Back(15,25,0,"0C080300000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"031000l0000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Set_DITIs_Back(15,25,0,"0C0800l00000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"031000p7000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Set_DITIs_Back(15,25,0,"0C0800p70000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310000¨000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Set_DITIs_Back(15,25,0,"0C08000¨0000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"03100000?00",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Set_DITIs_Back(15,25,0,"0C080000?000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"03100000 10",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Set_DITIs_Back(15,25,0,"0C080000 100000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"031000000N0",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Set_DITIs_Back(15,25,0,"0C0800000N00000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310000003",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Set_DITIs_Back(15,25,0,"0C080000030000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310000000l",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Set_DITIs_Back(15,25,0,"0C08000000l0000000",0,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,1,0,0,0);
Group("Spread: 180.0 µL of VL - Lysis Buffer ");
Comment("Spread: 180.0 µL of VL - Lysis Buffer  (8985.6 µL total) from [grid:20 site:2 ['well 1 in 2-Vl Lysis Buffer :  with 8985.0 uL of VL - Lysis Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"MN VL","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,20,1,1,"0108l0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"MN VL","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,20,1,1,"0108l0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"MN VL","360.00","360.00","360.00","360.00",0,0,0,0,0,0,0,0,20,1,1,"0108l0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
StartTimer("1");
WaitTimer("1","600");
Group("Beads binding");
Mix(1,"MixBeads_1","480.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","600.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","720.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","780.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Group("Spread: 20.0 µL of B - Beads ");
Comment("Spread: 20.0 µL of B - Beads  (998.4 µL total) from [grid:5 site:1 ['well 1 in Reactives :  with 1200.0 uL of B - Beads '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
Aspirate(1,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(2,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(4,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(8,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Group("Wash in TeMag with VEB - Binding Buffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Spread: 600.0 µL of VEB - Binding Buffer ");
Comment("Spread: 600.0 µL of VEB - Binding Buffer  (29952.0 µL total) from [grid:20 site:3 ['well 1 in 3-VEB Binding Buffer :  with 29952.0 uL of VEB - Binding Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 846.0 µL of 48PosMagnet");
Comment("Mix: 846.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08?0000000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
PickUp_DITIs2(15,25,0,"0C08 1000000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08 1000000000000",0,0);
PickUp_DITIs2(15,25,0,"0C080N000000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080N000000000000",0,0);
PickUp_DITIs2(15,25,0,"0C080300000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080300000000000",0,0);
PickUp_DITIs2(15,25,0,"0C0800l00000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800l00000000000",0,0);
PickUp_DITIs2(15,25,0,"0C0800p70000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800p70000000000",0,0);
PickUp_DITIs2(15,25,0,"0C08000¨0000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000¨0000000000",0,0);
PickUp_DITIs2(15,25,0,"0C080000?000000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000?000000000",0,0);
PickUp_DITIs2(15,25,0,"0C080000 100000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000 100000000",0,0);
PickUp_DITIs2(15,25,0,"0C0800000N00000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800000N00000000",0,0);
PickUp_DITIs2(15,25,0,"0C080000030000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000030000000",0,0);
PickUp_DITIs2(15,25,0,"0C08000000l0000000",0,"DiTi 1000ul",0);
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000000l0000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 1044.0 µL from 48PosMagnet");
Comment("Waste: 1044.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
PickUp_DITIs2(15,25,0,"0C08?0000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08 1000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080N000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080300000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800l00000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800p70000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08000¨0000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000?000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000 100000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800000N00000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000030000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08000000l0000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","104.00","104.00","104.00","104.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Water free cuvette","204.00","204.00","204.00","204.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
GroupEnd();
Group("Wash in TeMag with VEW1 - Wash Buffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Spread: 600.0 µL of VEW1 - Wash Buffer ");
Comment("Spread: 600.0 µL of VEW1 - Wash Buffer  (29952.0 µL total) from [grid:23 site:4 ['well 1 in 4-VEW1 Wash Buffe :  with 29952.0 uL of VEW1 - Wash Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000000p7000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000000¨000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800000000?00000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800000000 10000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000000000N0000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000000003000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000000000l000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000000000p700",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800000000000¨00",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000000000000?0",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08000000000000 1",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080000000000000N",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
PickUp_DITIs2(15,25,0,"0C08000000p7000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000000¨000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800000000?00000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800000000 10000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08000000000N0000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000000003000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000000000l000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000000000p700",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C0800000000000¨00",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08000000000000?0",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C08000000000000 1",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,0,"0C080000000000000N",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
Group("Wash in TeMag with VEW2 - WashBuffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Spread: 600.0 µL of VEW2 - WashBuffer ");
Comment("Spread: 600.0 µL of VEW2 - WashBuffer  (29952.0 µL total) from [grid:23 site:5 ['well 1 in 5-VEW2-WashBuffer :  with 29952.0 uL of VEW2 - WashBuffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08?0000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08 1000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",3,0,0);
Set_DITIs_Back(15,25,1,"0C080N000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",3,0,0);
Set_DITIs_Back(15,25,1,"0C080300000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800l00000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800p70000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000¨0000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000?000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000 100000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800000N00000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000030000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000000l0000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
PickUp_DITIs2(15,25,1,"0C08?0000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08 1000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080N000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080300000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800l00000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800p70000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08000¨0000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000?000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000 100000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800000N00000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000030000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08000000l0000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
Group("Wash in TeMag with Ethanol 80% ");
Group("Spread: 600.0 µL of Ethanol 80% ");
Comment("Spread: 600.0 µL of Ethanol 80%  (29952.0 µL total) from [grid:21 site:1 ['well 1 in 7-EtOH80p :  with 29952.0 uL of Ethanol 80% '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000000p7000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000000¨000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800000000?00000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800000000 10000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000000000N0000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000000003000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000000000l000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000000000p700",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",3,0,0);
Set_DITIs_Back(15,25,1,"0C0800000000000¨00",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000000000000?0",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",3,0,0);
Set_DITIs_Back(15,25,1,"0C08000000000000 1",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",3,0,0);
Set_DITIs_Back(15,25,1,"0C080000000000000N",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 24","0","");
WaitTimer("1","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
PickUp_DITIs2(15,25,1,"0C08000000p7000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000000¨000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800000000?00000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800000000 10000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08000000000N0000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000000003000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000000000l000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000000000p700",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C0800000000000¨00",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08000000000000?0",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C08000000000000 1",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,1,"0C080000000000000N",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","3","0","");
WaitTimer("1","240");
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 24","0","");
WaitTimer("1","240");
GroupEnd();
Group("Spread: 100.0 µL of Elution Buffer ");
Comment("Spread: 100.0 µL of Elution Buffer  (4992.0 µL total) from [grid:20 site:1 ['well 1 in 1-VEL-ElutionBuffer :  with 4992.0 uL of Elution Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,20,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","300.00","300.00","300.00","300.00",0,0,0,0,0,0,0,0,20,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","3","0","");
WaitTimer("1","120");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix_Eluat.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 90.0 µL of 48PosMagnet");
Comment("Mix: 90.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,2,"0C08?0000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",3,0,0);
Set_DITIs_Back(15,25,2,"0C08 1000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",3,0,0);
Set_DITIs_Back(15,25,2,"0C080N000000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",3,0,0);
Set_DITIs_Back(15,25,2,"0C080300000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",3,0,0);
Set_DITIs_Back(15,25,2,"0C0800l00000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",3,0,0);
Set_DITIs_Back(15,25,2,"0C0800p70000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",3,0,0);
Set_DITIs_Back(15,25,2,"0C08000¨0000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",3,0,0);
Set_DITIs_Back(15,25,2,"0C080000?000000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",3,0,0);
Set_DITIs_Back(15,25,2,"0C080000 100000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",3,0,0);
Set_DITIs_Back(15,25,2,"0C0800000N00000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",3,0,0);
Set_DITIs_Back(15,25,2,"0C080000030000000",0,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",3,0,0);
Set_DITIs_Back(15,25,2,"0C08000000l0000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","60.00");
Group("Transfer: 100.0 µL of 48PosMagnet");
Comment("Transfer: 100.0 µL of 48PosMagnet [grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8] into Eluat[grid:6 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46, 47, 48]:");
PickUp_DITIs2(15,25,2,"0C08?0000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310?000000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C08 1000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310 100000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C080N000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"03100N00000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C080300000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310030000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C0800l00000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"031000l0000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C0800p70000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"031000p7000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C08000¨0000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310000¨000",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C080000?000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"03100000?00",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C080000 100000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"03100000 10",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C0800000N00000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"031000000N0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C080000030000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310000003",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(15,25,2,"0C08000000l0000000",0,"DiTi 1000ul",0);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310000000l",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
