20180920_093402 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul;1000-1
1,1;DiTi 1000ul;1000-2
1,2;DiTi 1000ul;1000-3
7,0;Trough 100ml;1-VEL-ElutionBuffer
7,1;Trough 100ml;2-Vl Lysis Buffer
7,2;Trough 100ml;3-VEB Binding Buffer
8,0;Tube Greinerconic 2mL 16 Pos;Reactives
9,0;Tube Eppendorf 6x 16 Pos;Proben
15,0;Tube Eppendorf 48 Pos;48 Pos Heat
15,1;Tube Eppendorf 48 Pos;48PosMagnet
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;7-EtOH80p
23,6;Washstation 2Grid DiTi Waste
25,0;96 Well DeepWell square;Plate lysis
25,2;96 Well DeepWell square;Plate EtOH
1;System
15;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("Extracting RNA from 8 samples with the MN-Vet kit");
Wash(15,23,1,23,0,"30",50,"10",50,0,50,100,1,0,1000,0);
Group("Sample Lysis");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("preMix: 422.4 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("preMix: 422.4 µL of ProtK+cRNA+IC-MS2 mix  into Reactives[grid:8 site:1 well:8] from 3 components:");
Comment("   1- 192.0 µL of Proteinase K  from Reactives[grid:8 site:1 well:16]");
Aspirate(1,"Water wet","192.00",0,0,0,0,0,0,0,0,0,0,0,8,0,1,"0110002",0,0);
Dispense(1,"Water wet","192.00",0,0,0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Comment("   2- 38.4 µL of Carrier RNA  from Reactives[grid:8 site:1 well:15]");
Aspirate(2,"Water wet",0,"38.40",0,0,0,0,0,0,0,0,0,0,8,0,1,"0110001",0,0);
Dispense(2,"Water wet",0,"38.40",0,0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Comment("   3- 192.0 µL of IC MS2 phage culture  from Reactives[grid:8 site:1 well:14]");
Aspirate(4,"Water wet",0,0,"192.00",0,0,0,0,0,0,0,0,0,8,0,1,"01100p0",0,0);
Dispense(4,"Water wet",0,0,"192.00",0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
GroupEnd();
Group("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix  (422.4 µL total) from [grid:8 site:1 well:8] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12]:");
Aspirate(1,"Water free","88.00",0,0,0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Aspirate(2,"Water free",0,"88.00",0,0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Aspirate(4,"Water free",0,0,"88.00",0,0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Aspirate(8,"Water free",0,0,0,"88.00",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
GroupEnd();
GroupEnd();
DropDITI(15,23,6,0,300,0);
