20140319_163633 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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7,0;Tube Eppendorf 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;7-VEL-ElutionBuffer
22,4;Trough 100ml;5-EtOH80p
22,5;Trough 100ml;4-VEW2-WashBuffer
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;1-Vl Lysis Buffer
24,1;Trough 100ml;2-VEB Binding Buffer
24,2;Trough 100ml;3-VEW1 Wash Buffe
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 200 ul;200µl-2
1;System
14;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("NucleoMag VET for up to 48 samples");
Group("Initializations");
Variable(Tip_tNum,"4",1,"Nummer of tips",1,1.000000,4.000000,0,2,1,1);
BeginLoop("Tip_tNum","tip");
IfThen("LOOP_tip",0,"1");
Variable(tip_m[~LOOP_tip~],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[~LOOP_tip~],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tip_m[~LOOP_tip~],"tip_m[~LOOP_tip - 1~] * 2",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[~LOOP_tip~],"tips_m[~LOOP_tip-1~] + tip_m[~LOOP_tip~]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
EndLoop();
Variable(Tip200_maxV,"199",1,"Max vol 200µL tips",1,50.000000,199.000000,0,2,1,1);
Variable(Tip1000_maxV,"999",1,"Max vol 1000µL tips",1,100.000000,999.000000,0,2,1,1);
Variable(Proteinase_K_Vol,"24",1,"20 µL Proteinase K + 4 µL RNA carrier",1,1.000000,100.000000,0,2,1,1);
Variable(LysBufVL,"180",1,"180 µL Lysis Buffer VL?",1,50.000000,500.000000,0,2,1,1);
Variable(BindBufVEB,"600",1,"600 µL Binding Buffer VEB?",1,400.000000,900.000000,0,2,1,1);
Variable(WashBufVEW2,"600",1,"600 µL Wash Buffer VEW2 ?",1,400.000000,900.000000,0,2,1,1);
Variable(Disp_tCols,"6",1,"Nummer of columns",1,1.000000,6.000000,0,2,1,1);
Variable(Disp_tRows,"8",1,"Nummer of rows",1,1.000000,8.000000,0,2,1,1);
Variable(SampleNum,"48",1,"Number of samples",1,1.000000,48.000000,0,2,1,1);
Variable(isTRIzolSamples ,"n",1,"TRIzol lysed samples? ( y/n )",0,4.000000,48.000000,1,2,1,1);
UserPrompt("Please check  (three 100mL troughs in each grid):  Grid 24:      1. Lysis Buffer VL (>~SampleNum*LysBufVL/1000~ mL);                      2. Binding Buffer VEB  (>~SampleNum*BindBufVEB/1000~ mL)                                                                                              3. Wash Buffer VEW1 (>~SampleNum*0.6~ mL)Grid 23:      1. Wash Buffer VEW2  (>~SampleNum*WashBufVEW2/1000~ mL)                                                                                             2. 80% EtOH  (>~SampleNum*0.6~ mL);                                                                                                              3. Elution Buffer VEL (>~SampleNum*0.1~ mL)",2,-1);
GroupEnd();
IfThen("isTRIzolSamples",0,"y");
Variable(SampleVol,"350",1,"Sample volumen to use?(µL)",1,300.000000,400.000000,0,2,1,0);
UserPrompt("For TRIzol lysed samples preload tubes on te-mags with 400µL of the aqueous phase",1,-1);
UserPrompt("Continue?",1,-1);
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
Variable(SampleVol,"200",1,"Sample volumen to use?(µL)",1,40.000000,200.000000,0,2,1,0);
UserPrompt("Please check:    Grid 11-13:    At last ~SampleVol~ µL of ~SampleNum~ Samples in Eppendorf tubes                          Grid 7:         Reactives     1. B-Beads  (>~SampleNum*20~ µL);                                                                    8. Internal control MS2 (>~SampleNum*20~ µL);                                                                  13. RNA carrier (>~SampleNum*4~ µL);                                                                                                            16. Proteinase K (>~SampleNum*20~ µL)",1,-1);
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Group("Proteinase K");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"Proteinase_K_Vol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip200_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 200 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Proteinase K");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(Vol,"tipV[~LOOP_tip~] * Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_OFFSET,"LOOP_tip-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(1,"Water free dispense DITi 200-AVR","Vol",0,0,0,0,0,0,0,0,0,0,0,7,0,1,"0110002",0,0);
Variable(TIP_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"Water free dispense DITi 200-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Proteinase K");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
GroupEnd();
Group("Lysis Buffer");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"LysBufVL",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Lysis Buffer");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
EndLoop();
Aspirate(15,"Water free dispense DITi1000-AVR","tipV[1] * Disp_V","tipV[2] * Disp_V","tipV[3] * Disp_V","tipV[4] * Disp_V",0,0,0,0,0,0,0,0,24,0,1,"0108l0",0,0);
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"Water free dispense DITi1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Lysis Buffer");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
GroupEnd();
Group("Samples");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"SampleVol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 200 ul",0,0,10,70);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Lysis Buffer");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Aspirate(15,"Water free dispense DITi1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,11,0,1,"0310?000000",0,0);
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"Water free dispense DITi1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Lysis Buffer");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
GroupEnd();
EndIf();
UserPrompt("Continue?",1,-1);
EndScript(0);
