20140321_101731 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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6,0;Trough 100ml;4-VEW2-WashBuffer
7,0;Tube Eppendorf 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;7-VEL-ElutionBuffer
22,4;Trough 100ml;5-EtOH80p
22,5;Trough 100ml;Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;1-Vl Lysis Buffer
24,1;Trough 100ml;2-VEB Binding Buffer
24,2;Trough 100ml;3-VEW1 Wash Buffe
25,0;DiTi 1010 ul;1010-1
25,1;DiTi 1010 ul;1010-2
25,2;DiTi 210 ul;210-1
1;System
14;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("NucleoMag VET for up to 48 samples");
Group("Initializations");
Variable(Tip_tNum,"4",1,"Nummer of tips",1,1.000000,4.000000,0,2,1,1);
BeginLoop("Tip_tNum","tip");
IfThen("LOOP_tip",0,"1");
Variable(tip_m[~LOOP_tip~],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[~LOOP_tip~],"1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tip_m[~LOOP_tip~],"tip_m[~LOOP_tip - 1~] * 2",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(tips_m[~LOOP_tip~],"tips_m[~LOOP_tip-1~] + tip_m[~LOOP_tip~]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
EndLoop();
Variable(Tip200_maxV,"190",1,"Max vol 200µL tips",1,50.000000,190.000000,0,2,1,1);
Variable(Tip1000_maxV,"950",1,"Max vol 1000µL tips",1,100.000000,950.000000,0,2,1,1);
Variable(Proteinase_K_Vol,"24",1,"20 µL Proteinase K + 4 µL RNA carrier(revise-better in LysB?)",1,1.000000,50.000000,0,2,1,1);
Variable(AccumulatedVol,"0",0,"Vol to be removed",0,1.000000,50.000000,0,2,0,0);
Variable(LysBufVL,"180",1,"180 µL Lysis Buffer VL?",1,50.000000,180.000000,0,2,1,1);
Variable(BindBufVEB,"600",1,"600 µL Binding Buffer VEB?",1,400.000000,800.000000,0,2,1,1);
Variable(B_Beads,"20",1,"20 µL B-Beads?",1,1.000000,50.000000,0,2,1,1);
Variable(WashBufVEW1,"600",1,"600 µL Wash Buffer VEW1 ?",1,400.000000,900.000000,0,2,1,1);
Variable(WashBufVEW2,"600",1,"600 µL Wash Buffer VEW2 ?",1,400.000000,900.000000,0,2,1,1);
Variable(EtHO80,"600",1,"600 µL Ethanol 80% ?",1,400.000000,900.000000,0,2,1,1);
Variable(ElutBufVEL,"100",1,"100 µL Elution Buffer VEL ?",1,40.000000,190.000000,0,2,1,1);
Variable(Disp_tCols,"6",1,"Nummer of columns",1,1.000000,6.000000,0,2,1,1);
Variable(Disp_tRows,"8",1,"Nummer of rows",1,1.000000,8.000000,0,2,1,1);
Variable(SampleNum,"6",1,"Number of samples",1,1.000000,48.000000,0,2,1,1);
Variable(isTRIzolSamples ,"n",1,"TRIzol lysed samples? ( y/n )",0,4.000000,48.000000,1,2,1,1);
UserPrompt("Please check  (three 100mL troughs in each grid):  Grid 24:      1. Lysis Buffer VL (>~SampleNum*LysBufVL/1000~ mL);                                                                                                             2. Binding Buffer VEB  (>~SampleNum*BindBufVEB/1000~ mL)                                                                                              3. Wash Buffer VEW1 (>~SampleNum*WashBufVEW1/1000~ mL)Grid 23:      1. Wash Buffer VEW2  (>~SampleNum*WashBufVEW2/1000~ mL)                                                                                             2. 80% EtOH  (>~SampleNum*EtHO80/1000~ mL);Grid 7:         Reactives     1. B-Beads  (>~SampleNum*B_Beads~ µL);                                                                                                               3. Elution Buffer VEL (>~SampleNum*ElutBufVEL/1000~ mL)",2,-1);
GroupEnd();
IfThen("isTRIzolSamples",0,"y");
Variable(SampleVol,"400",1,"Sample volumen?(µL)",1,50.000000,400.000000,0,2,1,0);
UserPrompt("Preload  TRIzol lysed samples tubes on te-mags with ~SampleVol~ µL of the aqueous phase",1,-1);
Variable(AccumulatedVol,"AccumulatedVol + SampleVol",0,"",0,50.000000,400.000000,0,2,0,0);
Else();
Variable(SampleVol,"200",1,"Sample volumen to use?(µL)",1,50.000000,200.000000,0,2,1,0);
UserPrompt("Please check:    Grid 11-13:    At last ~SampleVol~ µL of ~SampleNum~ Samples in Eppendorf tubes                          Grid 7:         Reactives    8. Internal control MS2 (>~SampleNum*20~ µL REVISE !!);                                                                  13. RNA carrier (>~SampleNum*4~ µL REVISE !!);                                                                                                            16. Proteinase K (>~SampleNum*20~ µL)",1,-1);
Variable(AccumulatedVol,"AccumulatedVol + SampleVol",0,"",0,50.000000,400.000000,0,2,0,0);
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Group("Proteinase K");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"Proteinase_K_Vol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip200_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 210 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Proteinase K");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(Vol,"tipV[~LOOP_tip~] * Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_OFFSET,"LOOP_tip-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(1,"AVR-Water free DITi 200","Vol",0,0,0,0,0,0,0,0,0,0,0,7,0,1,"0110002",0,0);
Variable(TIP_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(15,"AVR-Water free DITi 200","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Proteinase K");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol + Disp_V",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
Group("Lysis Buffer");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"LysBufVL",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1010 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Lysis Buffer");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
EndLoop();
Aspirate(15,"Buffer free DITi 1000-AVR","tipV[1] * Disp_V","tipV[2] * Disp_V","tipV[3] * Disp_V","tipV[4] * Disp_V",0,0,0,0,0,0,0,0,24,0,1,"0108l0",0,0);
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"Buffer free DITi 1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Lysis Buffer");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol + Disp_V",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
Group("Samples");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"SampleVol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1010 ul",0,0,10,70);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Samples");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(TIP_MASK,"tips_m[~TipN~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"SampleNum-SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(15,"AVR-Serum 1000","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,11,0,1,"0310?000000",0,0);
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,">> AVR-Serum 1000 <<	191","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-TipN",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
If("SampleCnt",2,"0","Dispense Samples");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol + Disp_V",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
StartTimer("1");
WaitTimer("1","10 * 60");
EndIf();
Group("Binding Buffer            ");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"BindBufVEB",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1010 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense Binding Buffer");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
EndLoop();
Aspirate(15,"Buffer free DITi 1000-AVR","tipV[1] * Disp_V","tipV[2] * Disp_V","tipV[3] * Disp_V","tipV[4] * Disp_V",0,0,0,0,0,0,0,0,24,1,1,"0108l0",0,0);
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"Buffer free DITi 1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense Binding Buffer");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol + Disp_V",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
Group("B-Beads");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Disp_V,"B_Beads",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip200_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 210 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense B-Beads");
IfThen("Disp_availables",0,"0");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TipN,"SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TipN,"Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
BeginLoop("TipN","tip");
Variable(r,"(SampleCnt+ TipN - LOOP_tip )  %  TipN",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SampleCnt - r+ TipN - LOOP_tip  ) / TipN ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(Vol,"tipV[~LOOP_tip~] * Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_OFFSET,"LOOP_tip-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(1,"AVR-Water free DITi 200","Vol",0,0,0,0,0,0,0,0,0,0,0,7,0,1,"0110002",0,0);
Variable(TIP_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_OFFSET",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Dispense(15,"AVR-Water free DITi 200","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense B-Beads");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
GroupEnd();
Group("Waste");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Waste,"AccumulatedVol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1010 ul",0,0,10,70);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Next sample Waste");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_sample,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_sample",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Variable(Waste_available,"Waste",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Aspirate Waste");
IfThen("Waste_available",2,"Tip_maxV");
Variable(Disp_V,"Tip_maxV",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(Disp_V,"Waste_available",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"WELL_sample",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(15,"AVR-Serum 1000","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Waste_available,"Waste_available - Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Dispense(15,"Buffer free DITi 1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,22,5,1,"0108l0",0,0);
If("Waste_available",2,"0","Aspirate Waste");
EndIf();
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
If("SampleCnt",2,"0","Next sample Waste");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol + Waste",0,"",0,50.000000,400.000000,0,2,0,0);
GroupEnd();
UserPrompt("Continue?",1,-1);
EndScript(0);
