20140318_154309 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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7,0;Tube Eppendorf 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;7-VEL-ElutionBuffer
22,4;Trough 100ml;5-EtOH80p
22,5;Trough 100ml;4-VEW2-WashBuffer
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;1-Vl Lysis Buffer
24,1;Trough 100ml;2-VEB Binding Buffer
24,2;Trough 100ml;3-VEW1 Wash Buffe
25,0;DiTi 1000ul;Labware1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 200 ul;falsch 200µl-1
1;System
14;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("NucleoMag VET for up to 48 samples");
Group("Initializations");
Variable(Tip_tNum,"4",1,"Nummer of tips",1,1.000000,4.000000,0,2,1,1);
Variable(Tip200_maxV,"130",1,"Max vol 200µL tips",1,50.000000,130.000000,0,2,1,1);
Variable(Tip1000_maxV,"900",1,"Max vol 1000µL tips",1,100.000000,1000.000000,0,2,1,1);
Variable(Tip_maxV,"Tip200_maxV",0,"Max vol in tips",0,50.000000,1050.000000,0,2,0,0);
Variable(Proteinase_K_Vol,"20",1,"Proteinase K Vol",1,1.000000,100.000000,0,2,1,1);
Variable(Disp_V,"20",1,"Vol (µL) to disdpense",1,1.000000,900.000000,0,2,1,1);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Vol,"Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
BeginLoop("Tip_tNum","tip");
Variable(tipV[~LOOP_tip~],"Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_tCols,"6",1,"Nummer of columns",1,1.000000,6.000000,0,2,1,1);
Variable(Disp_tRows,"8",1,"Nummer of rows",1,1.000000,8.000000,0,2,1,1);
Variable(Disp_tSubPlates,"Disp_tRows / Tip_tNum",0,"Nummer of columns",0,1.000000,12.000000,0,2,0,0);
Variable(SampleNum,"5",1,"Number of samples",1,1.000000,48.000000,0,2,1,1);
Variable(isTRIzolSamples ,"n",1,"TRIzol lysed samples? ( y/n )",0,4.000000,48.000000,1,2,1,1);
UserPrompt("Please check  (three 100mL troughs in each grid):  Grid 24:      1. Lysis Buffer VL (>~SampleNum*0.18~ mL);                      2. Binding Buffer VEB  (>~SampleNum*0.6~ mL)                                                                                              3. Wash Buffer VEW1 (>~SampleNum*0.6~ mL)Grid 23:      1. Wash Buffer VEW2  (>~SampleNum*0.6~ mL)                                                                                             2. 80% EtOH  (>~SampleNum*0.6~ mL);                                                                                                              3. Elution Buffer VEL (>~SampleNum*0.1~ mL)",2,-1);
GroupEnd();
IfThen("isTRIzolSamples",0,"y");
Comment("For TRIzol lysed samples preload tubes on te-mags with 400µL of the aqueous phase");
Variable(SampleVol,"350",1,"Sample volumen to use?(µL)",1,300.000000,400.000000,0,2,1,0);
UserPrompt("Continue?",1,-1);
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Else();
Variable(SampleVol,"200",1,"Sample volumen to use?(µL)",1,40.000000,200.000000,0,2,1,0);
UserPrompt("Please check:    Grid 11-13:    At last ~SampleVol~ µL of ~SampleNum~ Samples in Eppendorf tubes                          Grid 7:         Reactives     1. B-Beads  (>~SampleNum*20~ µL);                                                                    8. Internal control MS2 (>~SampleNum*20~ µL);                                                                  13. RNA carrier (>~SampleNum*4~ µL);                                                                                                            16. Proteinase K (>~SampleNum*20~ µL)",1,-1);
Wash(15,22,1,22,0,"3.0",500,"4.0",500,10,70,30,1,0,1000,0);
Group("Adding Proteinase K");
Variable(Disp_V,"20",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip200_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
GetDITI2(15,"DiTi 200 ul",0,0,10,70);
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SAMPLE_CNT,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
BeginLoop("Disp_tSubPlates","SubPlate");
BeginLoop("Disp_tCols","col");
IfThen("Disp_availables",0,"0");
BeginLoop("Tip_tNum","tip");
Variable(r,"(SAMPLE_CNT+ Tip_tNum - LOOP_tip )  %  Tip_tNum",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(n,"( SAMPLE_CNT - r+ Tip_tNum - LOOP_tip  ) / Tip_tNum",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("n",2,"Asp_maxDisp");
Variable(tipV[~LOOP_tip~],"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(tipV[~LOOP_tip~],"n",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(Vol,"tipV[~LOOP_tip~] * Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_OFFSET,"LOOP_tip-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(1,"Water free dispense DITi 200uL-AVR","Vol",0,0,0,0,0,0,0,0,0,0,0,7,0,1,"0110002",0,0);
Variable(TIP_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
UserPrompt("Disp_V: ~Disp_V~ µL",1,-1);
Dispense(15,"Water free dispense DITi 200uL-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",1,"col",0,1,0);
UserPrompt("Continue?",1,-1);
BeginLoop("Tip_tNum","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndLoop();
DropDITI(15,22,6,10,70,0);
GroupEnd();
EndIf();
UserPrompt("Continue?",1,-1);
Set_DITIs_Back(15,25,2,"0C08 1000000000000",0,0);
