20140523_105220 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Eppendorf 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
15,2;Mag48 -from 96 Well DeepWell;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
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--{ RPG }--
Group("Get Arguments: Dispense, SampleNum, Tip_maxVol");
IfThen("Dispense",0,""ReactiveToSamples"");
Variable(From,""Reactive"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Variable(To,""Samples"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Else();
EndIf();
IfThen("Dispense",0,""BufferToSamples"");
Variable(From,""Buffer"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Variable(To,""Samples"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Else();
EndIf();
IfThen("Dispense",0,""ReactiveToMag"");
Variable(From,""Reactive"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Variable(To,""Mag"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Else();
EndIf();
IfThen("Dispense",0,""BufferToMag"");
Variable(From,""Buffer"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Variable(To,""Mag"",0,"Please enter the number of samples",0,1.000000,48.000000,1,2,0,0);
Else();
EndIf();
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
GroupEnd();
Group("Get tips");
IfThen("tips_m[~Tip_tNum~]",2,"NoDrops");
Variable(TIP_MASK,"tips_m[~Tip_tNum~] - NoDrops",0,"",0,1.000000,10.000000,0,2,0,0);
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
Variable(NoDrops,"tips_m[~Tip_tNum~]",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Else();
EndIf();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
Variable(Asp_maxV,"Tip_maxV- ( Tip_maxV % Disp_V) ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(Asp_maxDisp,"Asp_maxV / Disp_V",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Disp_availables,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(sn,"Tip_tNum",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Dispense next");
IfThen("SampleCnt",3,"sn");
Variable(sn,"SampleCnt",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
Variable(TIP_MASK,"tips_m[~sn~]",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Disp_availables",0,"0");
BeginLoop("sn","tip");
Variable(rst,"(SampleCnt+ sn - LOOP_tip )  %  sn",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(an,"( SampleCnt - rst+ sn - LOOP_tip  ) / sn ",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("an",2,"Asp_maxDisp");
Variable(an,"Asp_maxDisp",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
Variable(tipV[~LOOP_tip~],"an",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
IfThen("From",0,""Reactive"");
Variable(Vol,"tipV[~LOOP_tip~] * Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(WELL_OFFSET,"WELL_react-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(TIP_OFFSET,"LOOP_tip-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(1,"AVR-Water free DITi 1000","Vol",0,0,0,0,0,0,0,0,0,0,0,7,0,1,"0110100",0,0);
Variable(TIP_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
IfThen("From",0,""Buffer"");
Variable(RACK_OFFSET,"RACK_buff-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Aspirate(15,"Buffer free DITi 1000-AVR","tipV[1] * Disp_V","tipV[2] * Disp_V","tipV[3] * Disp_V","tipV[4] * Disp_V",0,0,0,0,0,0,0,0,6,0,1,"0108l0",0,0);
Variable(RACK_OFFSET,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
Variable(Disp_availables,"tipV[1]",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
IfThen("To",0,""Mag"");
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("++++ Dispense Reactive in Mag");
Dispense(15,"AVR-Water free DITi 1000","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,15,2,1,"0608?000000",0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
Else();
EndIf();
IfThen("To",0,""Samples"");
Variable(WELL_OFFSET,"SampleNum - SampleCnt",0,"",0,1.000000,10.000000,0,2,0,0);
Dispense(15,">> Buffer free DITi 1000-AVR <<	336","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,11,0,1,"0310?000000",0,0);
Else();
EndIf();
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-sn",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("sn","tip");
IfThen("tipV[~LOOP_tip~]",2,"0");
Variable(tipV[~LOOP_tip~],"tipV[~LOOP_tip~]-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
EndLoop();
Variable(Disp_availables,"Disp_availables-1",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
If("SampleCnt",2,"0","Dispense next");
Variable(AccumulatedVol,"AccumulatedVol + Disp_V",0,"",0,50.000000,400.000000,0,2,0,0);
Variable(TIP_MASK,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("Drop",0,"y");
DropDITI(15,22,6,10,70,0);
Variable(NoDrops,"0",0,"Sample volumen to use?(200 µL)",0,50.000000,200.000000,0,2,0,0);
Else();
EndIf();
