20140523_105220 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Eppendorf 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
15,2;Mag48 -from 96 Well DeepWell;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
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--{ RPG }--
IfThen("SampleNum",2,"Disp_tRows * Disp_tCols");
UserPrompt("Error?",1,-1);
Else();
EndIf();
Variable(ReUsedTipBegTEMP,"ReUsedTipBeg",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("ReUseTips",0,"y");
IfThen("SampleNum",0,"NextPos4ReUsedTip - ReUsedTipBeg");
Variable(TIP_MASK,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(15,22,6,10,70,0);
Variable(NoDrops,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
UserPrompt("Error?",1,-1);
EndIf();
Else();
EndIf();
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
Variable(Rest,"20",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Group("Mix");
IfThen("AccumulatedVol",2,"Tip_maxV");
Variable(Disp_V,"Tip_maxV-Rest",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(Disp_V,"AccumulatedVol-Rest",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(sn,"Tip_tNum",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Next sample Mix");
Group("Getting tips");
IfThen("SampleCnt",3,"sn");
Variable(sn,"SampleCnt",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
EndIf();
Variable(TIP_MASK,"tips_m[~sn~]",0,"",0,1.000000,10.000000,0,2,0,0);
Group("Get tips");
IfThen("ReUseTips",0,"y");
Variable(WELL_OFFSET,"ReUsedTipBeg % 96",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"((ReUsedTipBeg - WELL_OFFSET) / 96) % Tips_tRacks",0,"",0,1.000000,10.000000,0,2,0,0);
PickUp_DITIs2(15,25,0,"0C08?0000000000000",0,"DiTi 1000ul",0);
IfThen("PreserveTips",0,"y");
Variable(NextPos4ReUsedTip,"ReUsedTipBeg",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Variable(ReUsedTipBeg,"ReUsedTipBeg + sn",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(NoDrops,"TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("NoDrops",0,"0");
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
Variable(NoDrops,"TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
IfThen("TIP_MASK",2,"NoDrops");
Variable(TIP_MASK,"TIP_MASK - NoDrops",0,"",0,1.000000,10.000000,0,2,0,0);
UserPrompt("tip mask: ~TIP_MASK~",0,-1);
GetDITI2(15,"DiTi 1000ul",0,0,10,70);
Variable(TIP_MASK,"tips_m[~sn~] ",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(NoDrops,"TIP_MASK",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
EndIf();
EndIf();
GroupEnd();
GroupEnd();
Variable(WELL_OFFSET,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
Comment("++++ Next sample Mix in Mag");
Mix(15,">> AVR-Water free DITi 1000 <<	337","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,15,2,1,"0608?000000",1,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-sn",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
Group("Drop tips");
IfThen("PreserveTips",0,"y");
Variable(WELL_OFFSET,"NextPos4ReUsedTip % 96",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"((NextPos4ReUsedTip - WELL_OFFSET) / 96) % Tips_tRacks",0,"",0,1.000000,10.000000,0,2,0,0);
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
Variable(NextPos4ReUsedTip,"NextPos4ReUsedTip + sn",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(RACK_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"-1",0,"",0,1.000000,10.000000,0,2,0,0);
DropDITI(15,22,6,10,70,0);
EndIf();
Variable(NoDrops,"0",0,"",0,1.000000,10.000000,0,2,0,0);
GroupEnd();
If("SampleCnt",2,"0","Next sample Mix");
GroupEnd();
IfThen("ReUseTips",0,"y");
IfThen("PreserveTips",0,"y");
Variable(ReUsedTipBeg,"ReUsedTipBegTEMP",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
EndIf();
Else();
EndIf();
