20140523_105220 Admin
Worktable link
Administrator
--{ RES }--
V;200
--{ CFG }--
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6,0;Trough 100ml;1-VEL-ElutionBuffer
6,1;Trough 100ml;2-Vl Lysis Buffer
6,2;Trough 100ml;3-VEB Binding Buffer
7,0;Tube Eppendorf 2mL 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
15,2;Mag48 -from 96 Well DeepWell;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;4-VEW1 Wash Buffe
22,4;Trough 100ml;5-VEW2-WashBuffer
22,5;Trough 100ml;6-Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;7-EtOH80p
24,1;Trough 100ml;8-Unnused
24,2;Trough 100ml;9-Unnused
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
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--{ RPG }--
Group("Mix and Waste");
Variable(rutip,"~ReUseTips~",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(ptip,"~PreserveTips~",0,"",0,1.000000,10.000000,1,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_SIM_Mix.esc",1);
Comment("++++     Mag exec");
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_SIM_Mix.esc",2);
StartTimer("1");
WaitTimer("1","30");
Variable(ReUseTips,"~ptip~",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(PreserveTips,"n",0,"",0,1.000000,10.000000,1,2,0,0);
Subroutine("C:\ProgramData\Tecan\EVOware\database\Scripts\avr_SIM_Waste.esc",0);
Variable(ReUseTips,"~rutip~",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(PreserveTips,"~ptip~",0,"",0,1.000000,10.000000,1,2,0,0);
GroupEnd();
