20140321_110102 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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6,0;Trough 100ml;4-VEW2-WashBuffer
7,0;Tube Eppendorf 16 Pos;Reactives
8,0;Tube Eppendorf 3x 16 PosR;Eluat
11,0;Tube Eppendorf 3x 16 Pos;Proben
14,0;Tube Eppendorf 48 Pos;48 Pos Heat
14,1;Tube Eppendorf 48 Pos;48PosMagnet
22,0;Washstation 2Grid Cleaner short
22,1;Washstation 2Grid Waste
22,2;Washstation 2Grid Cleaner long
22,3;Trough 100ml;7-VEL-ElutionBuffer
22,4;Trough 100ml;5-EtOH80p
22,5;Trough 100ml;Waste
22,6;Washstation 2Grid DiTi Waste
24,0;Trough 100ml;1-Vl Lysis Buffer
24,1;Trough 100ml;2-VEB Binding Buffer
24,2;Trough 100ml;3-VEW1 Wash Buffe
25,0;DiTi 1010 ul;1010-1
25,1;DiTi 1010 ul;1010-2
25,2;DiTi 210 ul;210-1
1;System
14;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("Waste from 48PosMagnet");
Variable(SampleCnt,"SampleNum",0,"Please enter the number of samples",0,1.000000,48.000000,0,2,0,0);
Variable(Waste,"AccumulatedVol",0,"Proteinase K Vol",0,1.000000,1000.000000,0,2,0,0);
Variable(Tip_maxV,"Tip1000_maxV",0,"Max possible nummer of dispentions",0,1.000000,1000.000000,0,2,0,0);
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
GetDITI2(15,"DiTi 1010 ul",0,0,10,70);
Variable(col,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Variable(SubPlate,"0",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Next sample Waste");
IfThen("SampleCnt",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleCnt~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(SampleCnt,"SampleCnt-Tip_tNum",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
Variable(WELL_sample,"Disp_tRows * col + Tip_tNum * SubPlate",0,"",0,1.000000,10.000000,0,2,0,0);
IfThen("WELL_sample",2,"Disp_tRows * Disp_tCols-Tip_tNum");
UserPrompt("Error?",1,-1);
Else();
Variable(Waste_available,"Waste",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Comment("Aspirate Waste");
IfThen("Waste_available",2,"Tip_maxV");
Variable(Disp_V,"Tip_maxV",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Else();
Variable(Disp_V,"Waste_available",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
EndIf();
Variable(WELL_OFFSET,"WELL_sample",0,"",0,1.000000,10.000000,0,2,0,0);
Aspirate(15,"AVR-Serum 1000","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,14,1,1,"0608?000000",0,0);
Variable(WELL_OFFSET,"0",0,"",0,1.000000,10.000000,0,2,0,0);
Variable(Waste_available,"Waste_available - Disp_V",0,"Max Vol to aspire",0,1.000000,1000.000000,0,2,0,0);
Dispense(15,"Buffer free DITi 1000-AVR","Disp_V","Disp_V","Disp_V","Disp_V",0,0,0,0,0,0,0,0,22,5,1,"0108l0",0,0);
If("Waste_available",2,"0","Aspirate Waste");
EndIf();
IfThen("col",0,"Disp_tCols-1");
Variable(col,"0",0,"next col",0,300.000000,400.000000,0,2,0,0);
Variable(SubPlate,"SubPlate + 1",0,"",0,300.000000,400.000000,0,2,0,0);
Else();
Variable(col,"col + 1",0,"next col",0,300.000000,400.000000,0,2,0,0);
EndIf();
If("SampleCnt",2,"0","Next sample Waste");
IfThen("SampleNum",3,"Tip_tNum");
Variable(TIP_MASK,"tips_m[~SampleNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
Else();
Variable(TIP_MASK,"tips_m[~Tip_tNum~]",0,"",0,1.000000,10.000000,0,2,0,0);
EndIf();
DropDITI(15,22,6,10,70,0);
Variable(AccumulatedVol,"AccumulatedVol - Waste",0,"",0,50.000000,400.000000,0,2,0,0);
