20180913_111701 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul;1000-1
1,1;DiTi 1000ul;1000-2
1,2;DiTi 1000ul;1000-3
7,0;Trough 100ml;1-VEL-ElutionBuffer
7,1;Trough 100ml;2-Vl Lysis Buffer
7,2;Trough 100ml;3-VEB Binding Buffer
8,0;Tube Greinerconic 2mL 16 Pos;Reactives
9,0;Tube Eppendorf 6x 16 Pos;Proben
15,0;Tube Eppendorf 48 Pos;48 Pos Heat
15,1;Tube Eppendorf 48 Pos;48PosMagnet
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;7-EtOH80p
23,6;Washstation 2Grid DiTi Waste
25,0;96 Well DeepWell square;Plate lysis
25,2;96 Well DeepWell square;Plate EtOH
1;System
15;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("Extracting RNA from 96 samples with the MN-Vet kit");
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
Group("Prefill plate with EtOH80p");
Group("Spread: 600.0 µL of Ethanol 80% ");
Comment("Spread: 600.0 µL of Ethanol 80%  (59904.0 µL total) from [grid:23 site:6 well:1] into Plate EtOH[grid:25 site:3] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080N000000000000",0,0);
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Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08 1000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Group("Sample Lysis");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("preMix: 5068.8 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("preMix: 5068.8 µL of ProtK+cRNA+IC-MS2 mix  into Reactives[grid:8 site:1 well:8] from 3 components:");
Comment("   1- 460.8 µL of Carrier RNA  from Reactives[grid:8 site:1 well:15]");
Aspirate(1,"Water wet","460.80","0","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110001",0,0);
Dispense(1,"Water wet","153.60","153.60","153.60","153.60",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(1,"Water wet","153.60","153.60","153.60","153.60",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(1,"Water wet","153.60","153.60","153.60","153.60",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Comment("   2- 2304.0 µL of Proteinase K  from Reactives[grid:8 site:1 well:16]");
Aspirate(2,"Water wet","0","940","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110002",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Aspirate(2,"Water wet","0","940","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110002",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(2,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Aspirate(2,"Water wet","0","424.00","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110002",0,0);
Dispense(2,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(2,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(2,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Comment("   3- 2304.0 µL of IC MS2 phage culture  from Reactives[grid:8 site:1 well:14]");
Aspirate(4,"Water wet","0","0","940","0",0,0,0,0,0,0,0,0,8,0,1,"01100p0",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Aspirate(4,"Water wet","0","0","940","0",0,0,0,0,0,0,0,0,8,0,1,"01100p0",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(4,"Water wet","313.33","313.33","313.33","313.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
Aspirate(4,"Water wet","0","0","424.00","0",0,0,0,0,0,0,0,0,8,0,1,"01100p0",0,0);
Dispense(4,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110010",0,0);
Dispense(4,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110020",0,0);
Dispense(4,"Water wet","141.33","141.33","141.33","141.33",0,0,0,0,0,0,0,0,8,0,1,"0110040",0,0);
GroupEnd();
Group("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("Spread: 44.0 µL of ProtK+cRNA+IC-MS2 mix  (5068.8 µL total) from [grid:8 site:1 well:8] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(7,"Water free","924.00","924.00","924.00","924.00",0,0,0,0,0,0,0,0,8,0,1,"0110070",0,0);
Aspirate(8,"Water free","924.00","924.00","924.00","924.00",0,0,0,0,0,0,0,0,8,0,1,"0110070",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
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Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000?000000000",0,0);
Aspirate(7,"Water free","132.00","132.00","132.00","132.00",0,0,0,0,0,0,0,0,8,0,1,"0110070",0,0);
Aspirate(8,"Water free","132.00","132.00","132.00","132.00",0,0,0,0,0,0,0,0,8,0,1,"0110070",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800p70000000000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C080300000000000",0,0);
Dispense(15,"Water free","44.00","44.00","44.00","44.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("Spread: 180.0 µL of VL - Lysis Buffer ");
Comment("Spread: 180.0 µL of VL - Lysis Buffer  (17971.2 µL total) from [grid:7 site:2 well:1] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,1,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800l00000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000¨0000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000 100000000",0,0);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,1,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000030000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000p7000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000?00000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000N0000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000l000",0,0);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,1,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000000¨00",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000000 1",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000000N",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000000?0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000p700",0,0);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,1,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000003000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000 10000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000¨000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000l0000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000N00000000",0,0);
Aspirate(15,"Water free cuvette","720.00","720.00","720.00","720.00",0,0,0,0,0,0,0,0,7,1,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000?000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800p70000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C080300000000000",0,0);
Dispense(15,"Water free cuvette","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
UserPrompt("Please make sure the samples are in place",1,-1);
Group("Transfer: 140.0 µL of Proben");
Comment("Transfer: 140.0 µL of Proben [grid:9 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 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96] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 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96]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,9,0,1,"0610?0000000000000",0,0);
Dispense(15,"Serum Disp postMix3","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
DropDITI(15,23,6,0.00,300,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,9,0,1,"0610 1000000000000",0,0);
Dispense(15,"Serum Disp postMix3","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
DropDITI(15,23,6,0.00,300,0);
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GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Serum Asp","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,9,0,1,"06100000000000000N",0,0);
Dispense(15,"Serum Disp postMix3","140.00","140.00","140.00","140.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000000N",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,1,0,0,0);
UserPrompt("Please Schutteln the plates for lysis in pos 1",1,-1);
StartTimer("1");
WaitTimer("1","300");
GroupEnd();
Group("Beads binding");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(3,"MixBeads_1","480.00","480.00","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110300",1,0,0);
Mix(3,"MixBeads_1","600.00","600.00","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110300",1,0,0);
Mix(3,"MixBeads_1","720.00","720.00","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110300",1,0,0);
Mix(3,"MixBeads_1","780.00","780.00","0","0",0,0,0,0,0,0,0,0,8,0,1,"0110300",1,0,0);
Group("Spread: 20.0 µL of B - Beads ");
Comment("Spread: 20.0 µL of B - Beads  (1996.8 µL total) from [grid:8 site:1 well:1] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(3,"MixBeads_2","480.00","480.00","480.00","480.00",0,0,0,0,0,0,0,0,8,0,1,"0110300",0,0);
Aspirate(12,"MixBeads_2","480.00","480.00","480.00","480.00",0,0,0,0,0,0,0,0,8,0,1,"0110300",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
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Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
Group("Spread: 600.0 µL of VEB - Binding Buffer ");
Comment("Spread: 600.0 µL of VEB - Binding Buffer  (59904.0 µL total) from [grid:7 site:3 well:1] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,7,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,7,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
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Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,7,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
UserPrompt("Please Schutteln the plates for lysis in pos 1",1,-1);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
