20180614_104212 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul;1000-1
1,1;DiTi 1000ul;1000-2
1,2;DiTi 1000ul;1000-3
7,0;Trough 100ml;1-VEL-ElutionBuffer
7,1;Trough 100ml;2-Vl Lysis Buffer
7,2;Trough 100ml;3-VEB Binding Buffer
8,0;Tube Greinerconic 2mL 16 Pos;Reactives
8,1;Tube Eppendorf 2mL 1 Pos;Labware11
8,2;Tube Eppendorf 2mL 1 Pos;Labware12
8,3;Tube Eppendorf 2mL 1 Pos;Labware13
9,0;Tube Eppendorf 2m 6x 16 Pos;Proben
15,0;Tube Eppendorf 48 Pos;48 Pos Heat
15,1;Tube Eppendorf 48 Pos;48PosMagnet
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;7-EtOH80p
23,6;Washstation 2Grid DiTi Waste
25,0;MP 96 deep well 2 mL;Plate_VEW1
25,1;MP 96 deep well 2 mL;Plate_VEW2
25,2;MP 96 deep well 2 mL;Plate_EtOH
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("Extracting RNA from 96 samples with the MN-Vet kit");
Set_DITI_Counter2("DiTi 1000ul","1","1","1",0);
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
Group("Prefill plates with VEW1, VEW2, EtOH and Elution buffer");
Group("Spread: 600.0 µL of VEW1 - Wash Buffer ");
Comment("Spread: 600.0 µL of VEW1 - Wash Buffer  59904.0 µL total from [grid:23 site:4 well:1] into Plate_VEW1[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
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Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Spread: 100.0 µL of Elution Buffer ");
Comment("Spread: 100.0 µL of Elution Buffer  9984.0 µL total from [grid:7 site:1 well:1] into Plate_EtOH[grid:25 site:3] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(15,"Eluat","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,0,1,"0108l0",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08?0000000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080N000000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800l00000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000¨0000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000 100000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000030000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000p7000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000?00000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000N0000",0,0);
Aspirate(15,"Eluat","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,7,0,1,"0108l0",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000l000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000000¨00",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000000 1",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000000N",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000000?0",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000p700",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000003000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000 10000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000¨000000",0,0);
Aspirate(15,"Eluat","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,7,0,1,"0108l0",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000l0000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000N00000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000?000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800p70000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C080300000000000",0,0);
Dispense(15,"Eluat","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,2,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Spread: 600.0 µL of VEW2 - WashBuffer ");
Comment("Spread: 600.0 µL of VEW2 - WashBuffer  59904.0 µL total from [grid:23 site:5 well:1] into Plate_VEW2[grid:25 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,1,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,1,1,"0C080N000000000000",0,0);
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Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,1,1,"0C08 1000000000000",0,0);
GroupEnd();
GroupEnd();
