20190410_135512 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube Eppendorf 1 Pos;Labware1
1,1;Tube Eppendorf 2mL 1 Pos;Labware2
1,2;Tube Greiner conic 2mL 1 Pos;Labware3
2,0;Tube Eppendorf 2mL 16 Pos;Reactives2
5,0;Tube Greinerconic 2mL 16 Pos;Reactives
6,0;Tube Eppendorf 3x 16 PosR;Eluat
9,0;Tube Eppendorf 3x 16 Pos;Proben
12,0;Tube Eppendorf 48 Pos;48 Pos Heat
12,1;Tube Eppendorf 48 Pos;48PosMagnet
20,0;Trough 100ml;1-VEL-ElutionBuffer
20,1;Trough 100ml;2-Vl Lysis Buffer
20,2;Trough 100ml;3-VEB Binding Buffer
21,0;Trough 100ml;7-EtOH80p
21,1;Trough 100ml;8-Unnused
21,2;Trough 100ml;9-Unnused
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;6-Waste
23,6;Washstation 2Grid DiTi Waste
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("VL-pKmix Inactivatedfor extracting RNA from 48 samples with the MN-Vet kit");
Set_DITI_Counter2("DiTi 1000ul","25","1","1",0);
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
FACTS("Te-MagS","Te-MagS_ActivateHeater","50","0","");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
StartTimer("1");
WaitTimer("1","600");
Group("Beads binding");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Mix(1,"MixBeads_1","480.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","600.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","720.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","780.00","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Group("Spread: 20.0 µL of B - Beads ");
Comment("Spread: 20.0 µL of B - Beads  (998.4 µL total) from [grid:5 site:1 ['well 1 in Reactives :  with 1200.0 uL of B - Beads '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
Aspirate(1,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(2,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(4,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(8,"MixBeads_2","240.00","240.00","240.00","240.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Group("Wash in TeMag with VEB - Binding Buffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Spread: 600.0 µL of VEB - Binding Buffer ");
Comment("Spread: 600.0 µL of VEB - Binding Buffer  (29952.0 µL total) from [grid:20 site:3 ['well 1 in 3-VEB Binding Buffer :  with 29952.0 uL of VEB - Binding Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080N00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800l0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000¨000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000 10",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000003",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608000000l",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800000N0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"06080000?00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"060800p7000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608030000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608 100000",0,0);
GroupEnd();
Variable(repetitions,"13",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 846.0 µL of 48PosMagnet");
Comment("Mix: 846.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 25, 26, 27, 28, 33, 34, 35, 36, 41, 42, 43, 44, 45, 46, 47, 48, 37, 38, 39, 40, 29, 30, 31, 32, 21, 22, 23, 24, 13, 14, 15, 16, 5, 6, 7, 8]");
DropDITI(15,23,6,0.00,300,0);
