20190619_172344 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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11,0;AntiCOntamination;AntiCon1
11,1;AntiCOntamination;AntiCon2
11,2;AntiCOntamination;AntiCon3
11,3;AntiCOntamination;AntiCon4
11,4;AntiCOntamination;AntiCon5
11,5;AntiCOntamination;AntiCon6
11,9;AntiCOntamination;AntiCon7
11,11;AntiCOntamination;AntiCon8
11,14;AntiCOntamination;AntiCon9
11,18;AntiCOntamination;AntiCon10
11,22;AntiCOntamination;AntiCon11
11,27;AntiCOntamination;AntiCon12
11,34;AntiCOntamination;AntiCOn13
12,0;Sampletubes Eppendorfrack;mixes
13,0;Sampletubes Eppendorfrack;Samples2
14,0;Sampletubes Eppendorfrack;Samples3
15,0;Sampletubes Eppendorfrack;Samples4
16,0;Sampletubes Eppendorfrack;Samples5
17,0;Sampletubes Eppendorfrack;Samples6
19,0;Washstation 2Grid Cleaner short;Cleaner1
19,1;Washstation 2Grid Waste;Waste
19,2;Washstation 2Grid Cleaner long;Cleaner2
19,4;Trough 100ml;IC2-RNA
19,6;Washstation 2Grid DiTi Waste;DiTi Waste
22,0;Tube Falcon 15ml 12 Pos;DNase
23,0;96 Well Separation Plate;AGOWA
33,0;96 Well Macherey-Nagel Plate;plate1
33,1;96 Well Macherey-Nagel Plate;plate3
43,1;FilterplateaufElutionplate flach;Filterplatte auf Elutionsplatte
43,2;96 Well 8er Macherey-Nagel flach;SQW
53,0;Trough 100ml;BufferCub
53,1;Trough 100ml;MDB
53,2;Trough 100ml;Wasser
54,0;Trough 100ml;RA3/2
54,1;Trough 100ml;RA3/1
54,2;Trough 100ml;RA2
55,0;DiTi 1000ul;DiTi1000/2
55,1;DiTi 200 ul;DiTi 200 ul
55,2;96 Well Microplate;plate
1;System
1;Te-Shake 2Pos
1;Shelf 8+6Pos
66;Hotel 5Pos DeepWell;FilterplateaufElutionplate
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--{ RPG }--
Comment("Dilute 1:10 mix1 in 46 wells.");
UserPrompt("Check Diluent in ['well 1 in labware BufferCub:  with 4305.0 uL of reagent Diluent']Check mix1 in ['well 1 in labware mixes:  with 478.0 uL of reagent mix1']",1,-1);
Wash(255,19,1,19,0,"5",50,"10",50,0.00,50,100,1,0,0,0);
Group("Fill dilutions");
UserPrompt("Put the plate for dilutions in grid:55, site:3",1,-1);
Group("Distribute: 10.0 µL of mix1");
Comment("Distribute: 10.0 µL of mix1 (478.4 µL total) from [grid:12 site:1 ['well 1 in labware mixes:  with 478.0 uL of reagent mix1'] into plate[grid:55 site:3] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46]:");
GetDITI2(255,"DiTi 200 ul",0,0,0,300);
Aspirate(1,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(2,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(4,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(8,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(16,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(32,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(64,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(128,"Water free","60.00","60.00","60.00","60.00","60.00","60.00","50.00","50.00",0,0,0,0,12,0,1,"0110100",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,2,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,2,1,"0C080®300000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,2,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,2,1,"0C08000¨?000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,2,1,"0C080000 O00000000",0,0);
Dispense(63,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","0","0",0,0,0,0,55,2,1,"0C0800000?0000000",0,0);
GroupEnd();
DropDITI(255,19,6,0.00,300,0);
Group("Distribute: 90.0 µL of Diluent");
Comment("Distribute: 90.0 µL of Diluent (4305.6 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 4305.0 uL of reagent Diluent'] into plate[grid:55 site:3] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32, 33, 34, 35, 36, 37, 38, 39, 40, 41, 42, 43, 44, 45, 46]:");
GetDITI2(255,"DiTi 1000ul",0,0,0,300);
Aspirate(255,"Water free","540.00","540.00","540.00","540.00","540.00","540.00","450.00","450.00",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,2,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,2,1,"0C080®300000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,2,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,2,1,"0C08000¨?000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,2,1,"0C080000 O00000000",0,0);
Dispense(63,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","0","0",0,0,0,0,55,2,1,"0C0800000?0000000",0,0);
GroupEnd();
DropDITI(255,19,6,0.00,300,0);
GroupEnd();
