9984E71A
20190619_172344 Admin           
                                                                                                                                
Administrator                                                                                                                   
--{ RES }--
V;200
--{ CFG }--
999;217;32;
14;-1;-1;-1;-1;-1;12;-1;-1;-1;-1;-1;107;43;43;43;43;43;43;-1;104;-1;-1;108;106;-1;-1;-1;-1;-1;-1;-1;-1;-1;35;-1;-1;-1;-1;-1;-1;-1;-1;-1;41;-1;-1;-1;-1;-1;-1;-1;-1;-1;16;16;12;-1;-1;-1;-1;-1;-1;-1;-1;109;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;-1;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;;;
998;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;40;AntiCOntamination;AntiCOntamination;AntiCOntamination;AntiCOntamination;AntiCOntamination;AntiCOntamination;;;;AntiCOntamination;;AntiCOntamination;;;AntiCOntamination;;;;AntiCOntamination;;;;AntiCOntamination;;;;;AntiCOntamination;;;;;;;AntiCOntamination;;;;;;
998;AntiCon1;AntiCon2;AntiCon3;AntiCon4;AntiCon5;AntiCon6;;;;AntiCon7;;AntiCon8;;;AntiCon9;;;;AntiCon10;;;;AntiCon11;;;;;AntiCon12;;;;;;;AntiCOn13;;;;;;
998;1;Sampletubes Eppendorfrack;
998;mixes;
998;1;Sampletubes Eppendorfrack;
998;Samples2;
998;1;Sampletubes Eppendorfrack;
998;Samples3;
998;1;Sampletubes Eppendorfrack;
998;Samples4;
998;1;Sampletubes Eppendorfrack;
998;Samples5;
998;1;Sampletubes Eppendorfrack;
998;Samples6;
998;0;
998;8;Washstation 2Grid Cleaner short;Washstation 2Grid Waste;Washstation 2Grid Cleaner long;;Trough 100ml;;Washstation 2Grid DiTi Waste;;
998;Cleaner1;Waste;Cleaner2;;IC2-RNA;;DiTi Waste;;
998;0;
998;0;
998;1;Tube Falcon 15ml 12 Pos;
998;DNase;
998;1;96 Well Separation Plate;
998;AGOWA;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;6;96 Well Macherey-Nagel Plate;96 Well Macherey-Nagel Plate;;;;;
998;plate1;plate3;;;;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;;FilterplateaufElutionplate flach;96 Well 8er Macherey-Nagel flach;
998;;Filterplatte auf Elutionsplatte;SQW;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;3;Trough 100ml;Trough 100ml;Trough 100ml;
998;BufferCub;MDB;Wasser;
998;3;Trough 100ml;Trough 100ml;Trough 100ml;
998;RA3/2;RA3/1;RA2;
998;3;DiTi 1000ul;96 Well Microplate;96 Well Microplate;
998;DiTi1000/2;plate-2-moved;plate2;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;1;;
998;;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;0;
998;2;
998;105;1;
998;85;66;
998;4;
998;4;0;System;
998;0;2;Te-Shake 2Pos;
998;0;0;Shelf 8+6Pos;
998;0;1;Hotel 5Pos DeepWell;
998;2;
998;105;FilterplateaufElutionplate flach;
998;85;FilterplateaufElutionplate;
998;1;
998;1;
998;1;
998;66;
996;0;0;
--{ RPG }--
Comment("Prefill a plate with some dilutions of two master mix and Buffer Reagent for 4 samples.");
Set_DITI_Counter2("DiTi 1000ul","55","1","1",0);
UserPrompt("Check Buffer  in ['well 1 in labware BufferCub:  with 1497.0 uL of reagent Buffer ']Check mix1 in ['well 1 in labware mixes:  with 41.0 uL of reagent mix1']Check mix2 in ['well 2 in labware mixes:  with 41.0 uL of reagent mix2']",1,-1);
Comment("Check: ['well 4 in labware BufferCub:  with 1497.0 uL of reagent Buffer ']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",53,0,1,"010880",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Comment("Check: ['well 1 in labware mixes:  with 41.0 uL of reagent mix1']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",12,0,1,"0110100",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Comment("Check: ['well 2 in labware mixes:  with 41.0 uL of reagent mix2']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",12,0,1,"0110200",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Wash(255,19,1,19,0,"5",50,"10",50,0.00,50,100,1,0,0,0);
Transfer_Rack("55","55",1,0,1,0,0,"0","96 Well Microplate","Narrow","","","MP 3Pos","","MP 3Pos","1","","1");
Group("Fill plate with mixes ");
UserPrompt("Put the plates for Buffer ",1,-1);
Group("Spread: 10.0 µL of mix1");
Comment("Spread: 10.0 µL of mix1 (41.6 µL total) from [grid:12 site:1 ['well 1 in labware mixes:  with 41.0 uL of reagent mix1'] into plate1[grid:33 site:1] in order [1, 2, 3, 4]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(2,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(4,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(8,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110100",0,0);
Dispense(15,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,33,0,1,"0C08?0000000000000",0,0);
GroupEnd();
Group("Spread: 10.0 µL of mix2");
Comment("Spread: 10.0 µL of mix2 (41.6 µL total) from [grid:12 site:1 ['well 2 in labware mixes:  with 41.0 uL of reagent mix2'] into plate1[grid:33 site:1] in order [5, 6, 7, 8]:");
Aspirate(1,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(2,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(4,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(8,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,12,0,1,"0110200",0,0);
Dispense(15,"Water free","10.00","10.00","10.00","10.00","0","0","0","0",0,0,0,0,33,0,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Spread: 90.0 µL of Buffer ");
Comment("Spread: 90.0 µL of Buffer  (1497.6 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 1497.0 uL of reagent Buffer '] into plate1[grid:33 site:1] in order [1, 2, 3, 4]:");
Aspirate(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,53,0,1,"0108l0",0,0);
Dispense(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,33,0,1,"0C08?0000000000000",0,0);
GroupEnd();
Group("Spread: 90.0 µL of Buffer ");
Comment("Spread: 90.0 µL of Buffer  (1497.6 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 1137.0 uL of reagent Buffer '] into plate1[grid:33 site:1] in order [5, 6, 7, 8]:");
Aspirate(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,53,0,1,"0108l0",0,0);
Dispense(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,33,0,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Transfer: 10.0 µL from plate1");
Comment("Transfer: 10.0 µL from plate1 [grid:33 site:1] in order [1, 2, 3, 4] into plate2[grid:55 site:2] in order [1, 2, 3, 4]:");
Aspirate(15,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08?0000000000000",0,0);
Dispense(15,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C08?0000000000000",0,0);
GroupEnd();
Group("Transfer: 10.0 µL from plate1");
Comment("Transfer: 10.0 µL from plate1 [grid:33 site:1] in order [5, 6, 7, 8] into plate2[grid:55 site:2] in order [5, 6, 7, 8]:");
Aspirate(15,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08 1000000000000",0,0);
Dispense(15,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Spread: 90.0 µL of Buffer ");
Comment("Spread: 90.0 µL of Buffer  (1497.6 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 777.0 uL of reagent Buffer '] into plate2[grid:55 site:2] in order [1, 2, 3, 4]:");
Aspirate(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,53,0,1,"0108l0",0,0);
Dispense(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,55,1,1,"0C08?0000000000000",0,0);
GroupEnd();
Group("Spread: 90.0 µL of Buffer ");
Comment("Spread: 90.0 µL of Buffer  (1497.6 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 417.0 uL of reagent Buffer '] into plate2[grid:55 site:2] in order [5, 6, 7, 8]:");
Aspirate(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,53,0,1,"0108l0",0,0);
Dispense(15,"Water free","90.00","90.00","90.00","90.00","0","0","0","0",0,0,0,0,55,1,1,"0C08 1000000000000",0,0);
GroupEnd();
DropDITI(15,19,6,0.00,300,0);
GroupEnd();
