20190619_172344 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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11,0;AntiCOntamination;AntiCon1
11,1;AntiCOntamination;AntiCon2
11,2;AntiCOntamination;AntiCon3
11,3;AntiCOntamination;AntiCon4
11,4;AntiCOntamination;AntiCon5
11,5;AntiCOntamination;AntiCon6
11,9;AntiCOntamination;AntiCon7
11,11;AntiCOntamination;AntiCon8
11,14;AntiCOntamination;AntiCon9
11,18;AntiCOntamination;AntiCon10
11,22;AntiCOntamination;AntiCon11
11,27;AntiCOntamination;AntiCon12
11,34;AntiCOntamination;AntiCOn13
12,0;Sampletubes Eppendorfrack;mixes
13,0;Sampletubes Eppendorfrack;Samples2
14,0;Sampletubes Eppendorfrack;Samples3
15,0;Sampletubes Eppendorfrack;Samples4
16,0;Sampletubes Eppendorfrack;Samples5
17,0;Sampletubes Eppendorfrack;Samples6
19,0;Washstation 2Grid Cleaner short;Cleaner1
19,1;Washstation 2Grid Waste;Waste
19,2;Washstation 2Grid Cleaner long;Cleaner2
19,4;Trough 100ml;IC2-RNA
19,6;Washstation 2Grid DiTi Waste;DiTi Waste
22,0;Tube Falcon 15ml 12 Pos;DNase
23,0;96 Well Separation Plate;AGOWA
33,0;96 Well Macherey-Nagel Plate;plate1
33,1;96 Well Macherey-Nagel Plate;plate3
43,1;FilterplateaufElutionplate flach;Filterplatte auf Elutionsplatte
43,2;96 Well 8er Macherey-Nagel flach;SQW
53,0;Trough 100ml;BufferCub
53,1;Trough 100ml;MDB
53,2;Trough 100ml;Wasser
54,0;Trough 100ml;RA3/2
54,1;Trough 100ml;RA3/1
54,2;Trough 100ml;RA2
55,0;DiTi 1000ul;DiTi1000/2
55,1;96 Well Microplate;plate-2-moved
55,2;96 Well Microplate;plate2
1;System
1;Te-Shake 2Pos
1;Shelf 8+6Pos
66;Hotel 5Pos DeepWell;FilterplateaufElutionplate
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--{ RPG }--
Comment("Prefill a plate with some dilutions of two master mix and Buffer Reagent for 16 samples.");
UserPrompt("Check Buffer  in ['well 1 in labware BufferCub:  with 5990.0 uL of reagent Buffer ']Check mix1 in ['well 1 in labware mixes:  with 166.0 uL of reagent mix1']Check mix2 in ['well 2 in labware mixes:  with 166.0 uL of reagent mix2']",1,-1);
Comment("Check: ['well 4 in labware BufferCub:  with 5990.0 uL of reagent Buffer ']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",53,0,1,"010880",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Comment("Check: ['well 1 in labware mixes:  with 166.0 uL of reagent mix1']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",12,0,1,"0110100",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Comment("Check: ['well 2 in labware mixes:  with 166.0 uL of reagent mix2']");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Detect_Liquid(1,"Water free",12,0,1,"0110200",0,0);
DropDITI(1,19,6,0.00,300,0);
UserPrompt("",1,-1);
Wash(255,19,1,19,0,"5",50,"10",50,0.00,50,100,1,0,0,0);
Transfer_Rack("55","55",1,0,1,0,0,"0","96 Well Microplate","Narrow","","","MP 3Pos","","MP 3Pos","1","","1");
Group("Fill plate with mixes ");
UserPrompt("Put the plates for Buffer ",1,-1);
Group("Distribute: 10.0 µL of mix1");
Comment("Distribute: 10.0 µL of mix1 (166.4 µL total) from [grid:12 site:1 ['well 1 in labware mixes:  with 166.0 uL of reagent mix1'] into plate1[grid:33 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16]:");
GetDITI2(255,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(2,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(4,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(8,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(16,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(32,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(64,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Aspirate(128,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110100",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C080®300000000000",0,0);
GroupEnd();
Group("Distribute: 10.0 µL of mix2");
Comment("Distribute: 10.0 µL of mix2 (166.4 µL total) from [grid:12 site:1 ['well 2 in labware mixes:  with 166.0 uL of reagent mix2'] into plate1[grid:33 site:1] in order [17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32]:");
Aspirate(1,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(2,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(4,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(8,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(16,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(32,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(64,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Aspirate(128,"Water free","20.00","20.00","20.00","20.00","20.00","20.00","20.00","20.00",0,0,0,0,12,0,1,"0110200",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08000¨?000000000",0,0);
GroupEnd();
Group("Distribute: 90.0 µL of Buffer ");
Comment("Distribute: 90.0 µL of Buffer  (5990.4 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 5990.0 uL of reagent Buffer '] into plate1[grid:33 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16]:");
Aspirate(255,"Water free","180.00","180.00","180.00","180.00","180.00","180.00","180.00","180.00",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,33,0,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,33,0,1,"0C080®300000000000",0,0);
GroupEnd();
Group("Distribute: 90.0 µL of Buffer ");
Comment("Distribute: 90.0 µL of Buffer  (5990.4 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 4550.0 uL of reagent Buffer '] into plate1[grid:33 site:1] in order [17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32]:");
Aspirate(255,"Water free","180.00","180.00","180.00","180.00","180.00","180.00","180.00","180.00",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,33,0,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,33,0,1,"0C08000¨?000000000",0,0);
GroupEnd();
Group("Transfer: 10.0 µL from plate1");
Comment("Transfer: 10.0 µL from plate1 [grid:33 site:1] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16] into plate2[grid:55 site:2] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16]:");
Aspirate(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C08¯1000000000000",0,0);
Aspirate(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C080®300000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C080®300000000000",0,0);
GroupEnd();
Group("Transfer: 10.0 µL from plate1");
Comment("Transfer: 10.0 µL from plate1 [grid:33 site:1] in order [17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32] into plate2[grid:55 site:2] in order [17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32]:");
Aspirate(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C0800¬70000000000",0,0);
Aspirate(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,33,0,1,"0C08000¨?000000000",0,0);
Dispense(255,"Water free","10.00","10.00","10.00","10.00","10.00","10.00","10.00","10.00",0,0,0,0,55,1,1,"0C08000¨?000000000",0,0);
GroupEnd();
Group("Distribute: 90.0 µL of Buffer ");
Comment("Distribute: 90.0 µL of Buffer  (5990.4 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 3110.0 uL of reagent Buffer '] into plate2[grid:55 site:2] in order [1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16]:");
Aspirate(255,"Water free","180.00","180.00","180.00","180.00","180.00","180.00","180.00","180.00",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,1,1,"0C080®300000000000",0,0);
GroupEnd();
Group("Distribute: 90.0 µL of Buffer ");
Comment("Distribute: 90.0 µL of Buffer  (5990.4 µL total) from [grid:53 site:1 ['well 1 in labware BufferCub:  with 1670.0 uL of reagent Buffer '] into plate2[grid:55 site:2] in order [17, 18, 19, 20, 21, 22, 23, 24, 25, 26, 27, 28, 29, 30, 31, 32]:");
Aspirate(255,"Water free","180.00","180.00","180.00","180.00","180.00","180.00","180.00","180.00",0,0,0,0,53,0,1,"0108¯1",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,1,1,"0C0800¬70000000000",0,0);
Dispense(255,"Water free","90.00","90.00","90.00","90.00","90.00","90.00","90.00","90.00",0,0,0,0,55,1,1,"0C08000¨?000000000",0,0);
GroupEnd();
DropDITI(255,19,6,0.00,300,0);
GroupEnd();
