20191125_135937 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube Eppendorf 16 Pos;Primers-1
3,0;Tube Eppendorf 16 Pos;Primers-2
5,0;Tube Eppendorf 16 Pos;Primers-3
7,0;Tube Eppendorf 16 Pos;Primers-4
9,0;Tube Eppendorf 16 Pos;Primers-5
12,0;Tube 13*100mm 16 Pos;BufferTubes
13,0;Tube Eppendorf 16 Pos;PrimerMix
14,0;DiTi 200 ul;200-1
14,1;DiTi 200 ul;200-2
14,2;DiTi 1000ul;1000-1
14,3;DiTi Nested Waste MCA384;DiTi Waste
20,0;Tube Eppendorf 16 Pos;PCRkits+MMix
21,0;96 Well PCR Plate;PCR1
21,1;96 Well PCR Plate;PCR2
21,2;96 Well PCR Plate;PCR3
27,0;Wash Station Cleaner shallow
27,1;Wash Station Waste
27,2;Wash Station Cleaner deep
1;System
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--{ RPG }--
Comment("PCR 1 plates for 96 samples.");
Group("Mix: 12000.0 µL of TE 10x dil");
Comment("Mix: 12000.0 µL of TE 10x dil into grid:12 site:1 ['well 11[K01] in labware BufferTubes:  with 0.0 uL of reagent TE 10x dil'] from 2 components:");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Comment("   1- 1200.0 µL from grid:12 site:1:['well 6[F01] in labware BufferTubes:  with 2055.0 uL of reagent TE 100x']");
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110P00",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","260.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110P00",0,0);
Dispense(1,"Water free dispense","260.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Comment("   2- 10800.0 µL from grid:12 site:1:['well 1[A01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 2[B01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 3[C01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 4[D01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 5[E01] in labware BufferTubes:  with 7398.1 uL of reagent H2O']");
DropDITI(1,14,3,0.00,300,0);
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","818.14",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110100",0,0);
Dispense(1,"Water free dispense","818.14",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Aspirate(1,"Water free dispense","581.86",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","581.86",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Mix(1,"Water free dispense","846.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",3,0,0);
DropDITI(1,14,3,0.00,300,0);
GroupEnd();
Group("Mix: 12000.0 µL of TE 1x dil");
Comment("Mix: 12000.0 µL of TE 1x dil into grid:12 site:1 ['well 12[L01] in labware BufferTubes:  with 0.0 uL of reagent TE 1x dil'] from 2 components:");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Comment("   1- 1200.0 µL from grid:12 site:1:['well 11[K01] in labware BufferTubes:  with 12000.0 uL of reagent TE 10x dil']");
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","260.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110080",0,0);
Dispense(1,"Water free dispense","260.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Comment("   2- 10800.0 µL from grid:12 site:1:['well 1[A01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 2[B01] in labware BufferTubes:  with 3996.3 uL of reagent H2O', 'well 3[C01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 4[D01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 5[E01] in labware BufferTubes:  with 7398.1 uL of reagent H2O']");
DropDITI(1,14,3,0.00,300,0);
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","236.29",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110200",0,0);
Dispense(1,"Water free dispense","236.29",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Aspirate(1,"Water free dispense","223.71",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","223.71",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",0,0);
Mix(1,"Water free dispense","846.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"01100@0",3,0,0);
DropDITI(1,14,3,0.00,300,0);
GroupEnd();
Group("Mix: 5000.0 µL of TE 10x fixed");
Comment("Mix: 5000.0 µL of TE 10x fixed into grid:12 site:1 ['well 9[I01] in labware BufferTubes:  with 0.0 uL of reagent TE 10x fixed'] from 2 components:");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Comment("   1- 500.0 µL from grid:12 site:1:['well 6[F01] in labware BufferTubes:  with 855.0 uL of reagent TE 100x']");
Aspirate(1,"Water free dispense","500.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110P00",0,0);
Dispense(1,"Water free dispense","500.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Comment("   2- 4500.0 µL from grid:12 site:1:['well 1[A01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 2[B01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 3[C01] in labware BufferTubes:  with 594.4 uL of reagent H2O', 'well 4[D01] in labware BufferTubes:  with 7398.1 uL of reagent H2O', 'well 5[E01] in labware BufferTubes:  with 7398.1 uL of reagent H2O']");
DropDITI(1,14,3,0.00,300,0);
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free dispense","594.43",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110400",0,0);
Dispense(1,"Water free dispense","594.43",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Aspirate(1,"Water free dispense","145.57",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","145.57",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Mix(1,"Water free dispense","846.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",3,0,0);
DropDITI(1,14,3,0.00,300,0);
GroupEnd();
Group("Mix: 5000.0 µL of TE 1x fixed");
Comment("Mix: 5000.0 µL of TE 1x fixed into grid:12 site:1 ['well 10[J01] in labware BufferTubes:  with 0.0 uL of reagent TE 1x fixed'] from 2 components:");
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Comment("   1- 500.0 µL from grid:12 site:1:['well 9[I01] in labware BufferTubes:  with 5000.0 uL of reagent TE 10x fixed']");
Aspirate(1,"Water free dispense","500.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110020",0,0);
Dispense(1,"Water free dispense","500.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Comment("   2- 4500.0 µL from grid:12 site:1:['well 1[A01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 2[B01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 3[C01] in labware BufferTubes:  with 0.0 uL of reagent H2O', 'well 4[D01] in labware BufferTubes:  with 3492.6 uL of reagent H2O', 'well 5[E01] in labware BufferTubes:  with 7398.1 uL of reagent H2O']");
DropDITI(1,14,3,0.00,300,0);
GetDITI2(1,"DiTi 1000ul",0,0,0,300);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Aspirate(1,"Water free dispense","672.58",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110800",0,0);
Dispense(1,"Water free dispense","672.58",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Aspirate(1,"Water free dispense","940",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110@00",0,0);
Dispense(1,"Water free dispense","940.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Aspirate(1,"Water free dispense","67.42",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110@00",0,0);
Dispense(1,"Water free dispense","67.42",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",0,0);
Mix(1,"Water free dispense","846.00",0,0,0,0,0,0,0,0,0,0,0,12,0,1,"0110040",3,0,0);
DropDITI(1,14,3,0.00,300,0);
GroupEnd();
Wash(1,27,1,27,0,"5",50,"10",50,0.00,50,100,1,0,0,0);
