20190410_135512 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube Eppendorf 1 Pos;Labware1
1,1;Tube Eppendorf 2mL 1 Pos;Labware2
1,2;Tube Greiner conic 2mL 1 Pos;Labware3
2,0;Tube Eppendorf 2mL 16 Pos;Reactives2
5,0;Tube Greinerconic 2mL 16 Pos;Reactives
6,0;Tube Eppendorf 3x 16 PosR;Eluat
9,0;Tube Eppendorf 3x 16 Pos;Proben
12,0;Tube Eppendorf 48 Pos;48 Pos Heat
12,1;Tube Eppendorf 48 Pos;48PosMagnet
20,0;Trough 100ml;1-VEL-ElutionBuffer
20,1;Trough 100ml;2-Vl Lysis Buffer
20,2;Trough 100ml;3-VEB Binding Buffer
21,0;Trough 100ml;7-EtOH80p
21,1;Trough 100ml;8-Unnused
21,2;Trough 100ml;9-Unnused
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;6-Waste
23,6;Washstation 2Grid DiTi Waste
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("original samplesfor extracting RNA from 6 samples with the MN-Vet kit");
Set_DITI_Counter2("DiTi 1000ul","25","1","1",0);
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
FACTS("Te-MagS","Te-MagS_ActivateHeater","50","0","");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Add pre mix Prot K.");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("preMix: 244.8 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("preMix: 244.8 µL of ProtK+cRNA+IC-MS2 mix  into grid:5 site:1 ['well 8 in labware Reactives:  with 0.0 uL of reagent ProtK+cRNA+IC-MS2 mix '] from 3 components:");
Comment("   1- 28.8 µL from grid:5 site:1:['well 14 in labware Reactives:  with 29.0 uL of reagent Carrier RNA ']");
Aspirate(1,"Water wet","28.80","0","0","0",0,0,0,0,0,0,0,0,5,0,1,"01100p0",0,0);
Dispense(1,"Water wet","28.80","28.80","28.80","28.80",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Comment("   2- 144.0 µL from grid:5 site:1:['well 15 in labware Reactives:  with 86.0 uL of reagent Proteinase K ', 'well 16 in labware Reactives:  with 74.0 uL of reagent Proteinase K ']");
Aspirate(2,"Water wet","0","86.00","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110001",0,0);
Dispense(2,"Water wet","86.00","86.00","86.00","86.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Aspirate(2,"Water wet","0","58.00","0","0",0,0,0,0,0,0,0,0,5,0,1,"0110002",0,0);
Dispense(2,"Water wet","58.00","58.00","58.00","58.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Comment("   3- 72.0 µL from grid:5 site:1:['well 13 in labware Reactives:  with 74.0 uL of reagent IC MS2 phage culture ']");
Aspirate(4,"Water wet","0","0","72.00","0",0,0,0,0,0,0,0,0,5,0,1,"01100P0",0,0);
Dispense(4,"Water wet","72.00","72.00","72.00","72.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Mix(1,"Water free","220.32",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110010",3,0,0);
GroupEnd();
Group("Distribute: 34.0 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("Distribute: 34.0 µL of ProtK+cRNA+IC-MS2 mix  (244.8 µL total) from [grid:5 site:1 ['well 8 in labware Reactives:  with 244.8 uL of reagent ProtK+cRNA+IC-MS2 mix '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
Aspirate(1,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Aspirate(2,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Aspirate(4,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Aspirate(8,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,5,0,1,"0110010",0,0);
Dispense(15,"Water free","34.00","34.00","34.00","34.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(3,"Water free","34.00","34.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
GroupEnd();
Group("Transfer: 200.0 µL from Proben");
Comment("Transfer: 200.0 µL from Proben [grid:9 site:1] in order [1, 2, 3, 4, 5, 6] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
Aspirate(15,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310?000000",0,0);
Dispense(15,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
DropDITI(15,23,6,0.00,300,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Aspirate(3,"Serum Asp","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,9,0,1,"0310`000000",0,0);
Dispense(3,"Serum Disp postMix3","200.00","200.00","200.00","200.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,1,0,0,0);
Group("Distribute: 180.0 µL of VL - Lysis Buffer ");
Comment("Distribute: 180.0 µL of VL - Lysis Buffer  (1123.2 µL total) from [grid:20 site:2 ['well 1 in labware 2-Vl Lysis Buffer:  with 1123.0 uL of reagent VL - Lysis Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"MN VL","360.00","360.00","180.00","180.00",0,0,0,0,0,0,0,0,20,1,1,"0108l0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(3,"MN VL","180.00","180.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
StartTimer("1");
WaitTimer("1","600");
Group("Add B-Beads");
Mix(1,"MixBeads_1","480.00",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","600.00",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","720.00",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Mix(1,"MixBeads_1","780.00",0,0,0,0,0,0,0,0,0,0,0,5,0,1,"0110100",1,0,0);
Group("Distribute: 20.0 µL of B - Beads ");
Comment("Distribute: 20.0 µL of B - Beads  (124.8 µL total) from [grid:5 site:1 ['well 1 in labware Reactives:  with 1200.0 uL of reagent B - Beads '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
Aspirate(1,"MixBeads_2","40.00","40.00","20.00","20.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(2,"MixBeads_2","40.00","40.00","20.00","20.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(4,"MixBeads_2","40.00","40.00","20.00","20.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Aspirate(8,"MixBeads_2","40.00","40.00","20.00","20.00",0,0,0,0,0,0,0,0,5,0,1,"0110100",0,0);
Dispense(15,"MixBeads_2","20.00","20.00","20.00","20.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(3,"MixBeads_2","20.00","20.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
GroupEnd();
Group("Wash in TeMag with VEB - Binding Buffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Distribute: 600.0 µL of VEB - Binding Buffer ");
Comment("Distribute: 600.0 µL of VEB - Binding Buffer  (3744.0 µL total) from [grid:20 site:3 ['well 1 in labware 3-VEB Binding Buffer:  with 3744.0 uL of reagent VEB - Binding Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,20,2,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,20,2,1,"0108H0",0,0);
Dispense(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
Variable(repetitions,"2",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 846.0 µL of 48PosMagnet");
Comment("Mix: 846.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
Mix(15,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08?0000000000000",0,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Mix(3,"Water free cuvette","846.00","846.00","846.00","846.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",3,0,0);
Set_DITIs_Back(3,25,0,"0C08`0000000000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 1034.0 µL from 48PosMagnet");
Comment("Waste: 1034.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
PickUp_DITIs2(15,25,0,"0C08?0000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(15,"Te-Mag","94.00","94.00","94.00","94.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","194.00","194.00","194.00","194.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(3,25,0,"0C08`0000000000000",0,"DiTi 1000ul",0);
Aspirate(3,"Te-Mag","890","890","890","890",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Water free cuvette","890","890","890","890",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
Aspirate(3,"Te-Mag","94.00","94.00","94.00","94.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Water free cuvette","194.00","194.00","194.00","194.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
Group("Wash in TeMag with VEW1 - Wash Buffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Distribute: 600.0 µL of VEW1 - Wash Buffer ");
Comment("Distribute: 600.0 µL of VEW1 - Wash Buffer  (3744.0 µL total) from [grid:23 site:4 ['well 1 in labware 4-VEW1 Wash Buffe:  with 3744.0 uL of reagent VEW1 - Wash Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,23,3,1,"0108H0",0,0);
Dispense(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
Variable(repetitions,"2",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C08p7000000000000",0,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Mix(3,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",3,0,0);
Set_DITIs_Back(3,25,0,"0C080H000000000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
PickUp_DITIs2(15,25,0,"0C08p7000000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(3,25,0,"0C080H000000000000",0,"DiTi 1000ul",0);
Aspirate(3,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
Group("Wash in TeMag with VEW2 - WashBuffer ");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Group("Distribute: 600.0 µL of VEW2 - WashBuffer ");
Comment("Distribute: 600.0 µL of VEW2 - WashBuffer  (3744.0 µL total) from [grid:23 site:5 ['well 1 in labware 5-VEW2-WashBuffer:  with 3744.0 uL of reagent VEW2 - WashBuffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,23,4,1,"0108H0",0,0);
Dispense(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
Variable(repetitions,"2",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C080300000000000",0,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Mix(3,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",3,0,0);
Set_DITIs_Back(3,25,0,"0C0800<00000000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
PickUp_DITIs2(15,25,0,"0C080300000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(3,25,0,"0C0800<00000000000",0,"DiTi 1000ul",0);
Aspirate(3,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Water free cuvette","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
GroupEnd();
Group("Wash in TeMag with Ethanol 80% ");
Group("Distribute: 600.0 µL of Ethanol 80% ");
Comment("Distribute: 600.0 µL of Ethanol 80%  (3744.0 µL total) from [grid:21 site:1 ['well 1 in labware 7-EtOH80p:  with 3744.0 uL of reagent Ethanol 80% '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,21,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,21,0,1,"0108H0",0,0);
Dispense(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
Variable(repetitions,"2",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 540.0 µL of 48PosMagnet");
Comment("Mix: 540.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
Mix(15,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
Set_DITIs_Back(15,25,0,"0C0800 10000000000",0,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Mix(3,"Water free cuvette","540.00","540.00","540.00","540.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",3,0,0);
Set_DITIs_Back(3,25,0,"0C0800060000000000",0,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 24","0","");
WaitTimer("1","30.00");
Group("Waste: 600.0 µL from 48PosMagnet");
Comment("Waste: 600.0 µL from 48PosMagnet in [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
PickUp_DITIs2(15,25,0,"0C0800 10000000000",0,"DiTi 1000ul",0);
Aspirate(15,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Aspirate(15,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(15,23,6,0.00,300,0);
PickUp_DITIs2(3,25,0,"0C0800060000000000",0,"DiTi 1000ul",0);
Aspirate(3,"Te-Mag","550.00","550.00","550.00","550.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Rest","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag RestPlus","50","50","50","50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Aspirate(3,"Te-Mag Force Centre","0.50","0.50","0.50","0.50",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Serum Asp","650.00","650.00","650.00","650.00",0,0,0,0,0,0,0,0,23,1,1,"0108l0",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Wash(15,23,1,23,0,"4",50,"10",50,0.00,50,100,0,0,0,0);
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","3","0","");
WaitTimer("1","240");
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 24","0","");
WaitTimer("1","240");
GroupEnd();
Group("Elution");
Group("Distribute: 100.0 µL of Elution Buffer ");
Comment("Distribute: 100.0 µL of Elution Buffer  (624.0 µL total) from [grid:20 site:1 ['well 1 in labware 1-VEL-ElutionBuffer:  with 624.0 uL of reagent Elution Buffer '] into 48PosMagnet[grid:12 site:2] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","200.00","200.00","100.00","100.00",0,0,0,0,0,0,0,0,20,0,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(3,"Water free cuvette","100.00","100.00",0,0,0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
GroupEnd();
StartTimer("1");
FACTS("Te-MagS","Te-MagS_MoveToPosition","3","0","");
WaitTimer("1","120");
FACTS("Te-MagS","Te-MagS_MoveToPosition","0","0","");
Variable(repetitions,"2",0,"How many time repeat the subroutine?",0,0.00,0.00,0,0,0,0);
Variable(subroutine,"C:\Prog\robotevo\EvoScripts\subroutines\avr_MagMix_Eluat.esc",0,"The subroutine path",0,0.00,0.00,1,0,0,0);
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",1);
Group("Mix: 90.0 µL of 48PosMagnet");
Comment("Mix: 90.0 µL of 48PosMagnet [grid:12 site:2] in order:[1, 2, 3, 4, 9, 10]");
Mix(15,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",3,0,0);
DropDITI(15,23,6,0.00,300,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Mix(3,"Water free cuvette","90.00","90.00","90.00","90.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",3,0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
Subroutine("C:\Prog\robotevo\EvoScripts\subroutines\repeat_subroutine.esc",2);
StartTimer("2");
FACTS("Te-MagS","Te-MagS_MoveToPosition","1 31","0","");
WaitTimer("2","60.00");
Group("Transfer: 100.0 µL from 48PosMagnet");
Comment("Transfer: 100.0 µL from 48PosMagnet [grid:12 site:2] in order [1, 2, 3, 4, 9, 10] into Eluat[grid:6 site:1] in order [1, 2, 3, 4, 5, 6]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"0608?000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310?000000",0,0);
DropDITI(15,23,6,0.00,300,0);
GetDITI2(3,"DiTi 1000ul",0,0,0,300);
Aspirate(3,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,12,1,1,"06080600000",0,0);
Dispense(3,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,6,0,1,"0310`000000",0,0);
DropDITI(3,23,6,0.00,300,0);
GroupEnd();
GroupEnd();
