20190306_110420 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul;1000-1
1,1;DiTi 1000ul;1000-2
1,2;DiTi 1000ul;1000-3
9,0;Tube Eppendorf 6x 16 Pos;Proben
19,0;Tube Greinerconic 2mL 16 Pos;Reactives
20,0;Trough 100ml;1-VEL-ElutionBuffer
20,1;Trough 100ml;5-VEW2-WashBuffer
20,2;Trough 100ml;4-VEW1 Wash Buffe
21,1;Trough 100ml;Labware2
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;3-VEB Binding Buffer
23,4;Trough 100ml;2-Vl Lysis Buffer
23,5;Trough 100ml;7-EtOH80p
23,6;Washstation 2Grid DiTi Waste
25,0;96 Well DeepWell square;Plate lysis
25,2;96 Well DeepWell square;Plate EtOH
1;System
15;Te-MagS portrait
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--{ RPG }--
Comment("VL-pKmix prefillfor extracting RNA from 6 samples with the MN-Vet kit");
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
Group("Prefill plate with EtOH80p");
Group("Distribute: 600.0 µL of Ethanol 80% ");
Comment("Distribute: 600.0 µL of Ethanol 80%  (3744.0 µL total) from [grid:23 site:6 ['well 1[A01] in labware 7-EtOH80p:  with 3744.0 uL of reagent Ethanol 80% '] into Plate EtOH[grid:25 site:3] in order [1, 2, 3, 4, 9, 10]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08?0000000000000",0,0);
Aspirate(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,23,5,1,"0108H0",0,0);
Dispense(3,"Water free cuvette","600.00","600.00",0,0,0,0,0,0,0,0,0,0,25,2,1,"0C0806000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
Group("Sample Lysis");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("PreMix: 244.8 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("PreMix: 244.8 µL of ProtK+cRNA+IC-MS2 mix  into grid:19 site:1 ['well 8[H01] in labware Reactives:  with 0.0 uL of reagent ProtK+cRNA+IC-MS2 mix '] from 3 components:");
Comment("   1- 28.8 µL from grid:19 site:1:['well 14[N01] in labware Reactives:  with 29.0 uL of reagent Carrier RNA ']");
Aspirate(1,"Water wet","28.80","0","0","0",0,0,0,0,0,0,0,0,19,0,1,"01100p0",0,0);
Dispense(1,"Water wet","28.80","28.80","28.80","28.80",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Comment("   2- 144.0 µL from grid:19 site:1:['well 15[O01] in labware Reactives:  with 86.0 uL of reagent Proteinase K ', 'well 16[P01] in labware Reactives:  with 74.0 uL of reagent Proteinase K ']");
Aspirate(2,"Water wet","0","86.00","0","0",0,0,0,0,0,0,0,0,19,0,1,"0110001",0,0);
Dispense(2,"Water wet","86.00","86.00","86.00","86.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Aspirate(2,"Water wet","0","58.00","0","0",0,0,0,0,0,0,0,0,19,0,1,"0110002",0,0);
Dispense(2,"Water wet","58.00","58.00","58.00","58.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Comment("   3- 72.0 µL from grid:19 site:1:['well 13[M01] in labware Reactives:  with 74.0 uL of reagent IC MS2 phage culture ']");
Aspirate(4,"Water wet","0","0","72.00","0",0,0,0,0,0,0,0,0,19,0,1,"01100P0",0,0);
Dispense(4,"Water wet","72.00","72.00","72.00","72.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Mix(1,"Water free","220.32",0,0,0,0,0,0,0,0,0,0,0,19,0,1,"0110010",3,0,0);
GroupEnd();
Group("Distribute: 34.0 µL of ProtK+cRNA+IC-MS2 mix ");
Comment("Distribute: 34.0 µL of ProtK+cRNA+IC-MS2 mix  (244.8 µL total) from [grid:19 site:1 ['well 8[H01] in labware Reactives:  with 244.8 uL of reagent ProtK+cRNA+IC-MS2 mix '] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10]:");
Aspirate(1,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Aspirate(2,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Aspirate(4,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Aspirate(8,"Water free","68.00","68.00","34.00","34.00",0,0,0,0,0,0,0,0,19,0,1,"0110010",0,0);
Dispense(15,"Water free","34.00","34.00","34.00","34.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(3,"Water free","34.00","34.00",0,0,0,0,0,0,0,0,0,0,25,0,1,"0C0806000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Group("Distribute: 100.0 µL of VL - Lysis Buffer ");
Comment("Distribute: 100.0 µL of VL - Lysis Buffer  (624.0 µL total) from [grid:23 site:5 ['well 1[A01] in labware 2-Vl Lysis Buffer:  with 624.0 uL of reagent VL - Lysis Buffer '] into Plate lysis[grid:25 site:1] in order [1, 2, 3, 4, 9, 10]:");
Aspirate(15,"MN VL","200.00","200.00","100.00","100.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"MN VL","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Dispense(3,"MN VL","100.00","100.00",0,0,0,0,0,0,0,0,0,0,25,0,1,"0C0806000000000000",0,0);
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
GroupEnd();
