20190306_122833 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;DiTi 1000ul;1000-1
1,1;DiTi 1000ul;1000-2
1,2;DiTi 1000ul;1000-3
7,1;Trough 100ml;2-Vl Lysis Buffer
7,2;Trough 100ml;3-VEB Binding Buffer
8,0;Tube Greinerconic 2mL 16 Pos;Reactives
9,0;Tube Eppendorf 6x 16 Pos;Proben
15,0;Tube Eppendorf 48 Pos;48 Pos Heat
15,1;Tube Eppendorf 48 Pos;48PosMagnet
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;1-VEL-ElutionBuffer
23,5;Trough 100ml;5-VEW2-WashBuffer
23,6;Washstation 2Grid DiTi Waste
25,0;96 Well DeepWell square;Plate VEW1
25,1;96 Well Microplate;Plate ElutB
25,2;96 Well DeepWell square;Plate VEW2
1;System
15;Te-MagS portrait;Tube Eppendorf 48 Pos
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--{ RPG }--
Comment("Prefill plates with VEW1, Elution buffer and VEW2 for 96 samples.");
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
Group("Prefill plates with VEW1, Elution buffer and VEW2");
UserPrompt("Put the plates for VEW1, Elution buffer and VEW2 in that order",1,-1);
Group("Distribute: 100.0 µL of Elution Buffer ");
Comment("Distribute: 100.0 µL of Elution Buffer  (9984.0 µL total) from [grid:23 site:5 ['well 1[A01] in labware 1-VEL-ElutionBuffer:  with 9984.0 uL of reagent Elution Buffer '] into Plate ElutB[grid:25 site:2] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08?0000000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080N000000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800l00000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000¨0000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000 100000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000030000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000000p7000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800000000?00000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000000000N0000",0,0);
Aspirate(15,"Water free cuvette","900.00","900.00","900.00","900.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000000000l000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800000000000¨00",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000000000000 1",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000000000000N",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000000000000?0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000000000p700",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000000003000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800000000 10000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000000¨000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,4,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08000000l0000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800000N00000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080000?000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C0800p70000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C080300000000000",0,0);
Dispense(15,"Water free cuvette","100.00","100.00","100.00","100.00",0,0,0,0,0,0,0,0,25,1,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Distribute: 600.0 µL of VEW2 - WashBuffer ");
Comment("Distribute: 600.0 µL of VEW2 - WashBuffer  (59904.0 µL total) from [grid:23 site:6 ['well 1[A01] in labware 5-VEW2-WashBuffer:  with 59904.0 uL of reagent VEW2 - WashBuffer '] into Plate VEW2[grid:25 site:3] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080N000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800l00000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000¨0000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000 100000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000030000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000p7000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000?00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000N0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000l000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000000¨00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000000 1",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000000N",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000000000?0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000000p700",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000003000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000000 10000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000000¨000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08000000l0000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800000N00000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080000?000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C0800p70000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C080300000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,5,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,2,1,"0C08 1000000000000",0,0);
GroupEnd();
Group("Distribute: 600.0 µL of VEW1 - Wash Buffer ");
Comment("Distribute: 600.0 µL of VEW1 - Wash Buffer  (59904.0 µL total) from [grid:23 site:4 ['well 1[A01] in labware 4-VEW1 Wash Buffe:  with 59904.0 uL of reagent VEW1 - Wash Buffer '] into Plate VEW1[grid:25 site:1] in order [1, 2, 3, 4, 9, 10, 11, 12, 17, 18, 19, 20, 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8]:");
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08?0000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080N000000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800l00000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000¨0000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000 100000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000030000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000p7000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000?00000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000N0000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000l000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000000¨00",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000000 1",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000000N",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000000000?0",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000000p700",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000003000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000000 10000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000000¨000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08000000l0000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800000N00000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080000?000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C0800p70000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C080300000000000",0,0);
Aspirate(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,23,3,1,"0108l0",0,0);
Dispense(15,"Water free cuvette","600.00","600.00","600.00","600.00",0,0,0,0,0,0,0,0,25,0,1,"0C08 1000000000000",0,0);
GroupEnd();
GroupEnd();
DropDITI(15,23,6,0.00,300,0);
