20190410_135512 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube Eppendorf 1 Pos;Labware1
1,1;Tube Eppendorf 2mL 1 Pos;Labware2
1,2;Tube Greiner conic 2mL 1 Pos;Labware3
2,0;Tube Eppendorf 2mL 16 Pos;Reactives2
5,0;Tube Greinerconic 2mL 16 Pos;Reactives
6,0;Tube Eppendorf 3x 16 PosR;Eluat
9,0;Tube Eppendorf 3x 16 Pos;Proben
12,0;Tube Eppendorf 48 Pos;48 Pos Heat
12,1;Tube Eppendorf 48 Pos;48PosMagnet
20,0;Trough 100ml;1-VEL-ElutionBuffer
20,1;Trough 100ml;2-Vl Lysis Buffer
20,2;Trough 100ml;3-VEB Binding Buffer
21,0;Trough 100ml;7-EtOH80p
21,1;Trough 100ml;8-Unnused
21,2;Trough 100ml;9-Unnused
23,0;Washstation 2Grid Cleaner short
23,1;Washstation 2Grid Waste
23,2;Washstation 2Grid Cleaner long
23,3;Trough 100ml;4-VEW1 Wash Buffe
23,4;Trough 100ml;5-VEW2-WashBuffer
23,5;Trough 100ml;6-Waste
23,6;Washstation 2Grid DiTi Waste
25,0;DiTi 1000ul;1000-1
25,1;DiTi 1000ul;1000-2
25,2;DiTi 1000ul;1000-3
1;System
1;Te-MagS portrait
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--{ RPG }--
Comment("VL-only prefillfor extracting RNA from 6 samples with the MN-Vet kit");
Set_DITI_Counter2("DiTi 1000ul","25","1","1",0);
Wash(15,23,1,23,0,"30",50,"10",50,0.00,50,100,1,0,0,0);
Group("Distribute: 180.0 µL of VL - Lysis Buffer ");
Comment("Distribute: 180.0 µL of VL - Lysis Buffer  (1123.2 µL total) from [grid:20 site:2 ['well 1[A01] in labware 2-Vl Lysis Buffer:  with 1123.0 uL of reagent VL - Lysis Buffer '] into Proben[grid:9 site:1] in order [1, 2, 3, 4, 17, 18]:");
GetDITI2(15,"DiTi 1000ul",0,0,0,300);
Aspirate(15,"MN VL","360.00","360.00","180.00","180.00",0,0,0,0,0,0,0,0,20,1,1,"0108l0",0,0);
Dispense(15,"MN VL","180.00","180.00","180.00","180.00",0,0,0,0,0,0,0,0,9,0,1,"0310?000000",0,0);
Dispense(3,"MN VL","180.00","180.00",0,0,0,0,0,0,0,0,0,0,9,0,1,"031000<0000",0,0);
GroupEnd();
