20190619_172344 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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11,0;AntiCOntamination;AntiCon1
11,1;AntiCOntamination;AntiCon2
11,2;AntiCOntamination;AntiCon3
11,3;AntiCOntamination;AntiCon4
11,4;AntiCOntamination;AntiCon5
11,5;AntiCOntamination;AntiCon6
11,9;AntiCOntamination;AntiCon7
11,11;AntiCOntamination;AntiCon8
11,14;AntiCOntamination;AntiCon9
11,18;AntiCOntamination;AntiCon10
11,22;AntiCOntamination;AntiCon11
11,27;AntiCOntamination;AntiCon12
11,34;AntiCOntamination;AntiCOn13
12,0;Sampletubes Eppendorfrack;mixes
13,0;Sampletubes Eppendorfrack;Samples2
14,0;Sampletubes Eppendorfrack;Samples3
15,0;Sampletubes Eppendorfrack;Samples4
16,0;Sampletubes Eppendorfrack;Samples5
17,0;Sampletubes Eppendorfrack;Samples6
19,0;Washstation 2Grid Cleaner short;Cleaner1
19,1;Washstation 2Grid Waste;Waste
19,2;Washstation 2Grid Cleaner long;Cleaner2
19,4;Trough 100ml;IC2-RNA
19,6;Washstation 2Grid DiTi Waste;DiTi Waste
22,0;Tube Falcon 15ml 12 Pos;DNase
23,0;96 Well Separation Plate;AGOWA
33,0;96 Well Macherey-Nagel Plate;plate1
33,1;96 Well Macherey-Nagel Plate;plate3
43,1;FilterplateaufElutionplate flach;Filterplatte auf Elutionsplatte
43,2;96 Well Microplate;plateB_origen
53,0;Trough 100ml;BufferCub
53,1;Trough 100ml;MDB
53,2;Trough 100ml;Wasser
54,0;Trough 100ml;RA3/2
54,1;Trough 100ml;RA3/1
54,2;Trough 100ml;RA2
55,0;DiTi 200 ul;DiTi 200 ul
55,1;96 Well Microplate;plateA
55,2;96 Well Microplate;plateB
1;System
1;Te-Shake 2Pos
1;Shelf 8+6Pos
66;Hotel 5Pos DeepWell;FilterplateaufElutionplate
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--{ RPG }--
Comment("Transfer 50 uL to a moved plate.");
UserPrompt("Check buffer in ['well 1[A01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 2[B01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 3[C01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 4[D01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 5[E01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 6[F01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 7[G01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 8[H01] in labware plateA:  with 100.0 uL of reagent buffer']",1,-1);
UserPrompt("Put the plate B in grid:43, site:3",1,-1);
Wash(255,19,1,19,0,"5",50,"10",50,0.00,50,100,1,0,0,0);
Transfer_Rack("43","55",1,0,1,0,0,"0","96 Well Microplate","Narrow","","","MP 3Pos Cooled","","MP 3Pos","2","","2");
Group("Fill column");
Group("Distribute: 50.0 µL of buffer");
Comment("Distribute: 50.0 µL of buffer (416.0 µL total) from [grid:55 site:2 ['well 1[A01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 2[B01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 3[C01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 4[D01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 5[E01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 6[F01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 7[G01] in labware plateA:  with 100.0 uL of reagent buffer', 'well 8[H01] in labware plateA:  with 100.0 uL of reagent buffer'] into plateB_origen[grid:55 site:3] in order [1, 2, 3, 4, 5, 6, 7, 8]:");
GetDITI2(255,"DiTi 200 ul",0,0,0,300);
Aspirate(255,"Water free","50","50","50","50","50","50","50","50",0,0,0,0,55,1,1,"0C08¯1000000000000",0,0);
Dispense(255,"Water free","50","50","50","50","50","50","50","50",0,0,0,0,55,2,1,"0C08¯1000000000000",0,0);
GroupEnd();
DropDITI(255,19,6,0.00,300,0);
GroupEnd();
